monkeyml version=1.0
io_devices "IO Devices"
  iodevice dummy "dummy"
  iodevice phidget "phidget": alt=dummy
    iochannel phidget "channel1": variable=LickInput1, index=5, capability=analog_input
    iochannel phidget "channel2": variable=LickInput2, index=6, capability=analog_input
    iochannel phidget "channel3": variable=LickInput3, index=7, capability=analog_input
  iodevice NE500 "NE500": alt=dummy, address=#serialBridgeAddress, port=100
    iochannel NE500 "pump1": variable=LickOutput1, capability=01, flow_rate=100, syringe_diameter=15.0
    iochannel NE500 "pump2": variable=LickOutput3, capability=02, flow_rate=100, syringe_diameter=15.0
variables "Variables"
  folder "Bias Monitor"
    variable DOUBLE "Adjusted_Metric_Correct_Strategy": default_value=1.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=BiasMonitor, default=0
    variable DOUBLE "GainFactorCorrectMetric": default_value=1.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=BiasMonitor, default=1.5
    variable INTEGER "FlagAutomaticBiasSuppression": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=BiasMonitor, default=0
    variable INTEGER "WatchResponseSide": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=BiasMonitor
    variable INTEGER "WatchSuccessBias": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=BiasMonitor
    variable DOUBLE "Metric_Correct_Strategy": default_value=1.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=BiasMonitor, default=0
    variable DOUBLE "Metric_Biased_Strategy": default_value=1.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=BiasMonitor, default=0
    variable DOUBLE "Metric_Alternation_Strategy": default_value=1.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=BiasMonitor, default=0
  folder "Staircase Horizontal Stimulus Separation"
    variable INTEGER "FlagStaircaseHorizSeparation": default_value=1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_GENERAL, StairCase_HORIZ_SEP
    variable INTEGER "WatchSuccessStair_HorizSep": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=StairCase_HORIZ_SEP
    variable DOUBLE "HorizSep_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_HORIZ_SEP
    variable DOUBLE "HorizSep_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_HORIZ_SEP
    variable DOUBLE "deg_HorizSep_current": default_value=10, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_HORIZ_SEP
    variable DOUBLE "deg_HorizSep_upper_limit": default_value=10, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_HORIZ_SEP
    variable DOUBLE "deg_HorizSep_lower_limit": default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_HORIZ_SEP
    variable DOUBLE "deg_HorizSep_stair_step": default_value=-2.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_HORIZ_SEP
  variable INTEGER "y": default_value=1, editable=ALWAYS, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
  folder "Staircase probability free reward"
    variable INTEGER "FlagStaircaseProbFreeRew": default_value=1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_GENERAL, StairCase_FREE_REW
    variable INTEGER "WatchSuccessStair_FreeRew": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=StairCase_FREE_REW
    variable DOUBLE "FreeRew_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_FREE_REW
    variable DOUBLE "FreeRew_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_FREE_REW
    variable DOUBLE "FreeRew_CurrRandSamp": default_value=1.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_FREE_REW
    variable DOUBLE "p_FreeRew_current": default_value=1.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_FREE_REW
    variable DOUBLE "p_FreeRew_upper_limit": default_value=1.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_FREE_REW
    variable DOUBLE "p_FreeRew_lower_limit": default_value=0.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_FREE_REW
    variable DOUBLE "p_FreeRew_stair_step": default_value=-0.2, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=YES, groups=StairCase_FREE_REW
  folder "EnrichmentOfSomeStaircases"
    variable DOUBLE "CurrTrialsFraction": default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "IdxStairToBeEnriched_1": full_name=Index of the first staircase to be enriched, default_value=8, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "IdxStairToBeEnriched_2": full_name=Index of the second staircase to be enriched, default_value=9, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "IdxStairNotToBeEnriched": full_name=Index of the staricase not to be enriched, default_value=1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "FlagEnrichSomeStaircases": full_name=if it is 1, a fraction of the trials belong to some specific staircases, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=Training_Strategies
    variable INTEGER "TotNumFractionsOfTrialsInCaseOfEnrichment": full_name=this is the denominator of the fractions of trials that will belong to the enriched staircases, default_value=4, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=Training_Strategies
  folder "Transformations Test Variables"
    variable INTEGER "FlagForceCueStimSoundOff": default_value=0, editable=ALWAYS, full_name=used in the test transformation protocol to make sure that no cue sound is played for non trained axes, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "FlagShowOnlyTrainedAxes": default_value=1, editable=ALWAYS, full_name=Show only stimuli from axes trained during the staircases, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO, groups=Training_Strategies
    variable FLOAT "reject_size1": full_name=rotation to reject, default_value=25, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_size2": full_name=rotation to reject, default_value=35, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_size3": full_name=rotation to reject, default_value=35, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_size4": full_name=rotation to reject, default_value=25, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_size5": full_name=rotation to reject, default_value=30, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_rot1": full_name=rotation to reject, default_value=30, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_rot2": full_name=rotation to reject, default_value=30, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_rot3": full_name=rotation to reject, default_value=30, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_rot4": full_name=rotation to reject, default_value=30, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_rot5": full_name=rotation to reject, default_value=30, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_pos_x1": full_name=position to reject, default_value=-10, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_pos_x2": full_name=position to reject, default_value=-10, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_pos_x3": full_name=position to reject, default_value=0, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_pos_x4": full_name=position to reject, default_value=5, scope=GLOBAL, editable=never, persistant=NO
    variable FLOAT "reject_pos_x5": full_name=position to reject, default_value=10, scope=GLOBAL, editable=never, persistant=NO
    variable INTEGER "FlagNoFeedbackInCurrentTrial": default_value=0, editable=ALWAYS, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable FLOAT "Test_Size": full_name=stimulus size, default_value=35, scope=LOCAL, editable=never, persistant=NO
    variable FLOAT "Test_X_Position": full_name=stimulus size, default_value=-10, scope=LOCAL, editable=never, persistant=NO
    variable FLOAT "Test_Rotation": full_name=stimulus size, default_value=-30, scope=LOCAL, editable=never, persistant=NO
  folder "Announcements"
    variable INTEGER "Announce_TrialNoFeedback": full_name=start of actual behavioral trials, after the animal trigger port 2, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "Announce_TrialStart": full_name=start of actual behavioral trials, after the animal trigger port 2, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "Announce_TrialEnd": full_name=end of a behavioral trial just before the task system goes in the finish state, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "Announce_StimOn": full_name=signal stim is on before updating the screen, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "Announce_StimOff": full_name=signal stim is off after refreshing display, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "Announce_AcquirePort1": full_name=after animal trigger port 1, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "Announce_AcquirePort3": full_name=after animal trigger port 3, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
  folder "Staircase general"
    variable INTEGER "FlagDiscardHalfOfTheTrials": full_name=this is to balance the number of regular trials and depth rotation trials, default_value=1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "FlagDiscardTrialWithCurrentDeptRot": default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "FlagSampUniformDistr": full_name=smaple in the staircase from a unifrom distribution, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "FlagStaircaseSize": full_name=if it is zero the staircase is freezed, default_value=-1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL, StairCase_SIZE
    variable INTEGER "FlagStaircasePosHR": full_name=if it is zero the staircase is freezed, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL, StairCase_POS_HR
    variable INTEGER "FlagStaircasePosHL": full_name=if it is zero the staircase is freezed, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL, StairCase_POS_HL
    variable INTEGER "FlagStaircasePosVU": full_name=if it is zero the staircase is freezed, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL
    variable INTEGER "FlagStaircasePosVD": full_name=if it is zero the staircase is freezed, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL
    variable INTEGER "FlagStaircaseRotCW": full_name=if it is zero the staircase is freezed, default_value=1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL
    variable INTEGER "FlagStaircaseRotACW": full_name=if it is zero the staircase is freezed, default_value=1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL
    variable INTEGER "FlagStaircaseDeptRotRight": full_name=if it is zero the staircase is freezed, default_value=1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL, StairCase_DEPTH_ROT_R
    variable INTEGER "FlagStaircaseDeptRotLeft": full_name=if it is zero the staircase is freezed, default_value=-1, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_GENERAL, StairCase_DEPTH_ROT_L
    variable DOUBLE "Default_size": full_name=default, default_value=20, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable DOUBLE "Default_size_for_StairRotation": full_name=default, default_value=30, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable DOUBLE "Default_PosH": full_name=default, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable DOUBLE "Default_PosV": full_name=default, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable DOUBLE "Default_Rotation": full_name=default, default_value=0.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "Default_Rotation_in_Depth": full_name=default, default_value=0.0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "CurrStairTrial": full_name=Current staircase trial type, default_value=2, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "Flag_MatchCurrStairTrial": full_name=tell if the current trial type matches the current staircase trial type, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "N_Staircases": full_name=Total number of staircases (active or not), default_value=9, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
  folder "Staircase Parameters Stim Size"
    variable DOUBLE "p_GeomDistr_stair_size": default_value=0.1, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=StairCase_SIZE
    variable INTEGER "WatchSuccessStair_size": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=StairCase_SIZE
    variable DOUBLE "size_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_SIZE
    variable DOUBLE "size_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_SIZE
    variable DOUBLE "initial_size_stair": full_name=starting value of stimulus size, default_value=40, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_SIZE
    variable DOUBLE "current_size_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=40, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_SIZE
    variable DOUBLE "size_stair_step": full_name=size bins in the allowed size range, default_value=-2.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_SIZE
    variable INTEGER "N_sizes_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=15, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_SIZE
    variable INTEGER "N_sizes_stair_current": full_name=current number of sizes in the allowed size range, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_SIZE
  folder "Staircase Parameters Stim Pos HR"
    variable DOUBLE "p_GeomDistr_stair_PosHR": default_value=0.2, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO, groups=StairCase_POS_HR
    variable INTEGER "WatchSuccessStair_PosHR": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO, groups=StairCase_POS_HR
    variable DOUBLE "PosHR_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HR
    variable DOUBLE "PosHR_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HR
    variable DOUBLE "initial_PosHR_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HR
    variable DOUBLE "current_PosHR_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HR
    variable DOUBLE "PosHR_stair_step": full_name=size bins in the allowed size range, default_value=2.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HR
    variable INTEGER "N_PosHR_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HR
    variable INTEGER "N_PosHR_stair_current": full_name=current number of sizes in the allowed size range, default_value=6, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HR
  folder "Staircase Parameters Stim Pos HL"
    variable DOUBLE "p_GeomDistr_stair_PosHL": default_value=0.2, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO, groups=StairCase_POS_HL
    variable INTEGER "WatchSuccessStair_PosHL": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO, groups=StairCase_POS_HL
    variable DOUBLE "PosHL_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HL
    variable DOUBLE "PosHL_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HL
    variable DOUBLE "initial_PosHL_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HL
    variable DOUBLE "current_PosHL_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HL
    variable DOUBLE "PosHL_stair_step": full_name=size bins in the allowed size range, default_value=-2.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HL
    variable INTEGER "N_PosHL_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HL
    variable INTEGER "N_PosHL_stair_current": full_name=current number of sizes in the allowed size range, default_value=6, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO, groups=StairCase_POS_HL
  folder "Staircase Parameters Stim Pos VU"
    variable DOUBLE "p_GeomDistr_stair_PosVU": default_value=0.2, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "WatchSuccessStair_PosVU": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable DOUBLE "PosVU_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "PosVU_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "initial_PosVU_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "current_PosVU_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "PosVU_stair_step": full_name=size bins in the allowed size range, default_value=2.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_PosVU_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_PosVU_stair_current": full_name=current number of sizes in the allowed size range, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
  folder "Staircase Parameters Stim Pos VD"
    variable DOUBLE "p_GeomDistr_stair_PosVD": default_value=0.2, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "WatchSuccessStair_PosVD": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable DOUBLE "PosVD_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "PosVD_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "initial_PosVD_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "current_PosVD_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "PosVD_stair_step": full_name=size bins in the allowed size range, default_value=-2.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_PosVD_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_PosVD_stair_current": full_name=current number of sizes in the allowed size range, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
  folder "Staircase Parameters Stim Rot CW"
    variable DOUBLE "p_GeomDistr_stair_RotCW": default_value=0.4, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "WatchSuccessStair_RotCW": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable DOUBLE "RotCW_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "RotCW_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "initial_RotCW_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "current_RotCW_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "RotCW_stair_step": full_name=size bins in the allowed size range, default_value=-5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_RotCW_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_RotCW_stair_current": full_name=current number of sizes in the allowed size range, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
  folder "Staircase Parameters Stim Rot ACW"
    variable DOUBLE "p_GeomDistr_stair_RotACW": default_value=0.4, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "WatchSuccessStair_RotACW": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable DOUBLE "RotACW_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "RotACW_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "initial_RotACW_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "current_RotACW_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable DOUBLE "RotACW_stair_step": full_name=size bins in the allowed size range, default_value=5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_RotACW_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
    variable INTEGER "N_RotACW_stair_current": full_name=current number of sizes in the allowed size range, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=NO
  folder "Staircase Parameters Stim Dept Rot R"
    variable DOUBLE "p_GeomDistr_stair_DeptRotR": default_value=0.4, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable INTEGER "WatchSuccessStair_DeptRotR": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable DOUBLE "DeptRotR_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable DOUBLE "DeptRotR_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable DOUBLE "initial_DeptRotR_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable DOUBLE "current_DeptRotR_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable DOUBLE "DeptRotR_stair_step": full_name=size bins in the allowed size range, default_value=5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable INTEGER "N_DeptRotR_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_R
    variable INTEGER "N_DeptRotR_stair_current": full_name=current number of sizes in the allowed size range, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_R
  folder "Staircase Parameters Stim Dept Rot L"
    variable DOUBLE "p_GeomDistr_stair_DeptRotL": default_value=0.4, editable=ALWAYS, full_name=Bernoulli prob in the geometric distribution, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable INTEGER "WatchSuccessStair_DeptRotL": default_value=0, editable=ALWAYS, full_name=considered success in the stair case, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable DOUBLE "DeptRotL_stair_up_criterion": full_name=% correect required to go up, default_value=0.7, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable DOUBLE "DeptRotL_stair_down_criterion": full_name=% failed required to go down, default_value=0.5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable DOUBLE "initial_DeptRotL_stair": full_name=starting value of stimulus size, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable DOUBLE "current_DeptRotL_limit_stair": full_name=current limit of the allowed range of stimulus sizes, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable DOUBLE "DeptRotL_stair_step": full_name=size bins in the allowed size range, default_value=-5, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable INTEGER "N_DeptRotL_stair_upper_limit": full_name=maximal number of sizes in the allowed size range, default_value=12, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_L
    variable INTEGER "N_DeptRotL_stair_current": full_name=current number of sizes in the allowed size range, default_value=0, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=StairCase_DEPTH_ROT_L
  folder "Behavioral Parameters"
    variable INTEGER "FlagPlayOutcomeSound": default_value=1, editable=ALWAYS, full_name=Signal that the next will be a correction trial, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Sounds
    variable INTEGER "PunishmentCyclesIndex": default_value=0, editable=ALWAYS, full_name=Index of current punishment cycle, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "success": default_value=0, editable=ALWAYS, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "failure": default_value=0, editable=ALWAYS, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "ignore": default_value=0, editable=ALWAYS, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "backgr_punish_flickering_period": default_value=100 ms, editable=ALWAYS, full_name=period of flickering of the background for punishment, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Punishment
    variable DOUBLE "Backgr_GrayLevel": full_name=gray level of background during punishment, default_value=0.4, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1, groups=Punishment
    variable INTEGER "N_PunishmentCycles": default_value=5, editable=ALWAYS, full_name=Number of current punishment cycle, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Punishment
    variable INTEGER "FlagLongPunishment": default_value=1, editable=ALWAYS, full_name=Severly punish failure, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Punishment
    variable INTEGER "FlagCorrectionTrials": default_value=0, editable=ALWAYS, full_name=Repeat last trial if failed, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Training_Strategies
    variable INTEGER "FlagRepeatedTrial": default_value=0, editable=ALWAYS, full_name=Signal that the next will be a correction trial, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "FlagAlwaysReward": default_value=0, editable=ALWAYS, full_name=Always give reward after stimulus is presented, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Reward, Training_Strategies
    variable INTEGER "FlagAddFreeRewardToEarnedReward": default_value=0, editable=ALWAYS, full_name=when this flag is on the free reward is not given (instead the amount of free reward is added to the earned reward), logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Reward, Training_Strategies, StairCase_FREE_REW
  folder "Stimulus Parameters"
    variable INTEGER "MaxDeptRotAngle": default_value=60, editable=ALWAYS, full_name=Maximal angle of rotation in depth, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "BlobIdentityIdx": default_value=0, editable=ALWAYS, full_name=identity of the blob stimulus(0 if N=1; 1 if N=2), logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "FlagAlwaysEnforceMaxSeqLeng": default_value=1, editable=ALWAYS, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Training_Strategies
    variable INTEGER "FlagDiscardCurrStim": default_value=1, editable=ALWAYS, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Training_Strategies
    variable DOUBLE "StimAspectRatio": full_name=stimulus aspect ratio, default_value=1.747, scope=GLOBAL, editable=ALWAYS, persistant=1, groups=Stimulus_Properties
    variable INTEGER "FlagShowVisualStimuli": default_value=1, editable=ALWAYS, full_name=if 0 no stimulio are presented, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Training_Strategies
    variable INTEGER "FlagCueStimSound": default_value=1, editable=ALWAYS, full_name=Cue stim presentation with a reinforcement sound, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Sounds, Training_Strategies
    variable INTEGER "FlagShowStimRight": default_value=1, editable=ALWAYS, full_name=Allow stim pres on RIght side of screen, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Training_Strategies
    variable INTEGER "FlagShowStimLeft": default_value=1, editable=ALWAYS, full_name=Allow stim pres on Left side of screen, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Training_Strategies
    variable INTEGER "MaxN_IdenticalStims": default_value=3, editable=ALWAYS, full_name=Maximal number of stimuli with the same identity in a row, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Training_Strategies
    variable INTEGER "RightStim_Counter": default_value=0, editable=ALWAYS, full_name=Count how many right stims presented so far, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "LeftStim_Counter": default_value=0, editable=ALWAYS, full_name=Count how many left stims presented so far, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "StimRejections_Counter": default_value=0, editable=ALWAYS, full_name=Count how many times in a row a stimulus type has been rejected, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "MaxN_ConsecutiveRejections": default_value=10, editable=ALWAYS, full_name=Maximal number of stimuli with the same identity in a row, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "ImageIndex": default_value=0, editable=ALWAYS, full_name=Image Index, logging=WHEN_CHANGED, scope=LOCAL, persistant=NO
    variable INTEGER "DepRotIdx": default_value=0, editable=ALWAYS, full_name=Index of the totation in depth, logging=WHEN_CHANGED, scope=LOCAL, persistant=NO
    variable FLOAT "stm_pos_x": default_value=0, scope=GLOBAL, editable=never, persistant=NO, groups=Stimulus_Properties
    variable FLOAT "stm_pos_y": default_value=0, scope=GLOBAL, editable=never, persistant=NO, groups=Stimulus_Properties
    variable FLOAT "abs_stm_pos_x": full_name=Absolute x pos, default_value=0, scope=GLOBAL, editable=never, persistant=1, groups=Stimulus_Properties
    variable FLOAT "stm_size": full_name=stimulus size, default_value=40, scope=GLOBAL, editable=never, persistant=1, groups=Stimulus_Properties
    variable FLOAT "stm_rotation": full_name=stimulus rotation, default_value=0, scope=GLOBAL, editable=never, persistant=1, groups=Stimulus_Properties
    variable FLOAT "stm_rotation_in_depth": full_name=stimulus rotation, default_value=0, scope=GLOBAL, editable=never, persistant=1, groups=Stimulus_Properties
    variable INTEGER "StimulusPresentation_time": default_value=3000 ms, editable=ALWAYS, full_name=Duration of stimulus presentation, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Stimulus_Properties
    variable INTEGER "CueStimSoundPresentation_time": default_value=500 ms, editable=ALWAYS, full_name=Duration of sound to cue stim presentation, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Sounds
  folder "Timing Parameters"
    variable float "curr_reward_duration": default_value=0.01, editable=ALWAYS, full_name=Reward Duration, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Reward
    variable INTEGER "FlagShowStimAfterResponse": default_value=1, editable=ALWAYS, full_name=Keep showing the stimulsu after the response, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "TooFast_time": default_value=350 ms, editable=ALWAYS, full_name=Response in this interval is too fast: trial must be aborted, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1, groups=Training_Strategies
    variable INTEGER "acquire_time": default_value=4000 ms, editable=ALWAYS, full_name=Aquire Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable float "reward_duration": default_value=0.01, editable=ALWAYS, full_name=Reward Duration, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Reward
    variable float "minimal_reward_duration": default_value=0.01, editable=ALWAYS, full_name=Minimal Increment Reward Duration, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Reward
    variable float "maximal_reward_duration": default_value=0.02, editable=ALWAYS, full_name=Maximal Increment Reward Duration, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Reward
    variable float "increment_reward_duration": default_value=0.001, editable=ALWAYS, full_name=Increment Reward Duration, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Reward
    variable float "cue_reward_duration": default_value=0.001, editable=ALWAYS, full_name=Cue Reward Duration, logging=WHEN_CHANGED, scope=GLOBAL, persistant=YES, groups=Reward
    variable INTEGER "licking_time": default_value=4000 ms, editable=ALWAYS, full_name=Licking Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "intertrial_interval": default_value=1000 ms, editable=ALWAYS, full_name=Intertrial Interval, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "WaitForTrigger_time": default_value=5000ms, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "CheckForBlockedTrialDuration": default_value=300 ms, scope=GLOBAL, editable=ALWAYS, logging=WHEN_CHANGED, persistant=1
    variable INTEGER "BlockTrial_time": default_value=500 ms, editable=ALWAYS, full_name=Block Trial Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "prestim_time": default_value=300 ms, editable=ALWAYS, full_name=Pre Stimulus Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
    variable INTEGER "WaitForTriggerToneDuration_time": default_value=500 ms, editable=ALWAYS, full_name=Block Trial Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=1
  folder "Lick Sensor 1"
    variable INTEGER "LickInput1": default_value=0, editable=ALWAYS, full_name=Lick Sensor 1 Analog Value, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "LickInput2": default_value=0, editable=ALWAYS, full_name=Lick Sensor 2 Analog Value, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "LickInput3": default_value=0, editable=ALWAYS, full_name=Lick Sensor 3 Analog Value, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "LickOutput1": default_value=0, editable=ALWAYS, full_name=Reward Output 1 Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "LickOutput2": default_value=0, editable=ALWAYS, full_name=Reward Output 2 Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
    variable INTEGER "LickOutput3": default_value=0, editable=ALWAYS, full_name=Reward Output 3 Time, logging=WHEN_CHANGED, scope=GLOBAL, persistant=NO
sounds "Sounds"
  sound wav_file "StimRight": path=./Sounds/DZ_sound_long_6000_right.wav
  sound wav_file "StimLeft": path=./Sounds/DZ_sound_long_600_left.wav
  sound wav_file "FailureSound2": path=./Sounds/failure_DZ.wav
  sound wav_file "StartTrialSound": path=./Sounds/start.wav
  sound wav_file "BlockedTrialSound": path=./Sounds/blocked_trial.wav
  sound wav_file "AcquireSound": path=./Sounds/acquire.wav
  sound wav_file "RewardSound": path=./Sounds/NRsuccess.wav
  sound wav_file "FailureSound": path=./Sounds/failure.wav
stimuli "Stimuli"
  stimulus_group "Blob_N1_DepRotLeft"
    range_replicator "Blob_N1_DepRotLeft rotation replicator": from=-60, to=0, step=5, variable=DepRotIdx
      stimulus image_file "Blob_N1_CamRot_y$DepRotIdx.png 1": path=Blobs_TrainingRatsD1D2/Blob_N1_CamRot_y$DepRotIdx.png, x_size=stm_size*StimAspectRatio, y_size=stm_size*StimAspectRatio, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation, full_name=fullname_~ELEMENTCOUNT~
  stimulus_group "Blob_N2_DepRotLeft"
    range_replicator "Blob_N2_DepRotLeft rotation replicator": from=-60, to=0, step=5, variable=DepRotIdx
      stimulus image_file "Blob_N2_CamRot_y$DepRotIdx.png 1": path=Blobs_TrainingRatsD1D2/Blob_N2_CamRot_y$DepRotIdx.png, x_size=stm_size*StimAspectRatio, y_size=stm_size*StimAspectRatio, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation, full_name=fullname_~ELEMENTCOUNT~
  stimulus_group "Blob_N1_DepRotRight"
    range_replicator "Blob_N1_DepRotRight rotation replicator": from=0, to=60, step=5, variable=DepRotIdx
      stimulus image_file "Blob_N1_CamRot_y$DepRotIdx.png 2": path=Blobs_TrainingRatsD1D2/Blob_N1_CamRot_y$DepRotIdx.png, x_size=stm_size*StimAspectRatio, y_size=stm_size*StimAspectRatio, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation, full_name=fullname_~ELEMENTCOUNT~
  stimulus_group "Blob_N2_DepRotRight"
    range_replicator "Blob_N2_DepRotRight rotation replicator": from=0, to=60, step=5, variable=DepRotIdx
      stimulus image_file "Blob_N2_CamRot_y$DepRotIdx.png 2": path=Blobs_TrainingRatsD1D2/Blob_N2_CamRot_y$DepRotIdx.png, x_size=stm_size*StimAspectRatio, y_size=stm_size*StimAspectRatio, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation, full_name=fullname_~ELEMENTCOUNT~
  stimulus blank_screen "BlankScreen": color=0,0,0
  stimulus blank_screen "BlankScreenGray": color=Backgr_GrayLevel, Backgr_GrayLevel, Backgr_GrayLevel
  stimulus_group "Stimulus_Set"
    stimulus image_file "Blob_1_RotDep_0": path=Blobs_TrainingRatsD1D2/Blob_N1_CamRot_y0.png, x_size=stm_size*StimAspectRatio, y_size=stm_size*StimAspectRatio, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation
    stimulus image_file "Blob_2_RotDep_0": path=Blobs_TrainingRatsD1D2/Blob_N2_CamRot_y0.png, x_size=stm_size*StimAspectRatio, y_size=stm_size*StimAspectRatio, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation
  stimulus_group "Geometrical_Shape"
    stimulus image_file "Shape_1": path=Images/GeomSymbol_1.png, x_size=stm_size, y_size=stm_size, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation
    stimulus image_file "Shape_2": path=./Images/GeomSymbol_2.png, x_size=stm_size, y_size=stm_size, x_position=stm_pos_x, y_position=stm_pos_y, rotation=stm_rotation
    stimulus image_file "Shape_3": path=./Images/GeomSymbol_3.png, x_size=20, y_size=20, x_position=stm_pos_x, y_position=stm_pos_y, rotation=0.0
    stimulus image_file "Shape_4": path=./Images/GeomSymbol_4.png, x_size=20, y_size=20, x_position=stm_pos_x, y_position=stm_pos_y, rotation=0.0
    stimulus image_file "Shape_5": path=./Images/GeomSymbol_5.png, x_size=20, y_size=20, x_position=stm_pos_x, y_position=stm_pos_y, rotation=0.0
    stimulus image_file "Shape_6": path=./Images/GeomSymbol_6.png, x_size=20, y_size=20, x_position=stm_pos_x, y_position=0, rotation=0.0
optimizers "Optimizers"
  bias_monitor simple "Bias Monitor": success=WatchSuccessBias, response_index=WatchResponseSide, task_correlation=Metric_Correct_Strategy, response_bias_correlation=Metric_Biased_Strategy, alternation_correlation=Metric_Alternation_Strategy, history=10, grace_period=10
  staircase "Staircase Optimizer Probability Free Reward": watch=WatchSuccessStair_FreeRew, output=p_FreeRew_current, lower_limit=p_FreeRew_lower_limit, upper_limit=p_FreeRew_upper_limit, up_criterion=FreeRew_stair_up_criterion, down_criterion=FreeRew_stair_down_criterion, step_size=p_FreeRew_stair_step, grace_period=10, history=10
  staircase "Staircase Optimizer Horizontal Stimulus Separation": watch=WatchSuccessStair_HorizSep, output=deg_HorizSep_current, lower_limit=deg_HorizSep_lower_limit, upper_limit=deg_HorizSep_upper_limit, up_criterion=HorizSep_stair_up_criterion, down_criterion=HorizSep_stair_down_criterion, step_size=deg_HorizSep_stair_step, grace_period=10, history=10
  staircase "Staircase Optimizer Size": watch=WatchSuccessStair_size, output=N_sizes_stair_current, lower_limit=0, upper_limit=N_sizes_stair_upper_limit, up_criterion=size_stair_up_criterion, down_criterion=size_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Position Horizontal Right HR": watch=WatchSuccessStair_PosHR, output=N_PosHR_stair_current, lower_limit=0, upper_limit=N_PosHR_stair_upper_limit, up_criterion=PosHR_stair_up_criterion, down_criterion=PosHR_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Position Horizontal Right HL": watch=WatchSuccessStair_PosHL, output=N_PosHL_stair_current, lower_limit=0, upper_limit=N_PosHL_stair_upper_limit, up_criterion=PosHL_stair_up_criterion, down_criterion=PosHL_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Position Horizontal Right VU": watch=WatchSuccessStair_PosVU, output=N_PosVU_stair_current, lower_limit=0, upper_limit=N_PosVU_stair_upper_limit, up_criterion=PosVU_stair_up_criterion, down_criterion=PosVU_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Position Horizontal Right VD": watch=WatchSuccessStair_PosVD, output=N_PosVD_stair_current, lower_limit=0, upper_limit=N_PosVD_stair_upper_limit, up_criterion=PosVD_stair_up_criterion, down_criterion=PosVD_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Rotation CW": watch=WatchSuccessStair_RotCW, output=N_RotCW_stair_current, lower_limit=0, upper_limit=N_RotCW_stair_upper_limit, up_criterion=RotCW_stair_up_criterion, down_criterion=RotCW_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Rotation ACW": watch=WatchSuccessStair_RotACW, output=N_RotACW_stair_current, lower_limit=0, upper_limit=N_RotACW_stair_upper_limit, up_criterion=RotACW_stair_up_criterion, down_criterion=RotACW_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Rotation DeptRotR": watch=WatchSuccessStair_DeptRotR, output=N_DeptRotR_stair_current, lower_limit=0, upper_limit=N_DeptRotR_stair_upper_limit, up_criterion=DeptRotR_stair_up_criterion, down_criterion=DeptRotR_stair_down_criterion, step_size=1, grace_period=10, history=10
  staircase "Staircase Optimizer Rotation DeptRotL": watch=WatchSuccessStair_DeptRotL, output=N_DeptRotL_stair_current, lower_limit=0, upper_limit=N_DeptRotL_stair_upper_limit, up_criterion=DeptRotL_stair_up_criterion, down_criterion=DeptRotL_stair_down_criterion, step_size=1, grace_period=10, history=10
experiment "Experiment": full_name=My Experiment
  protocol "Initiate VIsual Pres Protocol": selection=sequential, nsamples=1, sampling_method=cycles
    block "Initiate VIsual Pres Block": selection=sequential, nsamples=1, sampling_method=cycles
      trial "Initiate VIsual Pres Trial": selection=sequential, nsamples=1, sampling_method=cycles
        action start_device_io "StartDeviceIO": device=phidget
        action start_device_io "StartDeviceIO2": device=NE500
        list "IVP Random Shapes List": full_name=List of Random geometrical shapes, description=Randomly sample a task system in which one of the many possible geometrical shapes is used, selection=random_with_replacement, nsamples=5000, sampling_method=cycles
          range_replicator "IVP Loop on Geometrical Shapes": from=0, to=1, step=1, variable=ImageIndex
            task_system "Initiate VIsual Pres Task"
              task_system_state "IVP Initialize": description=Initialize the current trial
                action assignment "Initialize FlagAddFreeRewardToEarnedReward to 1": variable=FlagAddFreeRewardToEarnedReward, value=1
                action assignment "Initialize FlagDiscardCurrStim to 0": variable=FlagDiscardCurrStim, value=0
                action if "if FlagAutomaticBiasSuppression": condition=FlagAutomaticBiasSuppression == 1
                  action if "if task strategy is biased": condition=abs(Metric_Biased_Strategy) > Adjusted_Metric_Correct_Strategy
                    action report "Report": message=>>>>>> STRATEGY IS BIASED!!
                    action if "if bias is to the left": condition=Metric_Biased_Strategy < 0
                      action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                      action assignment "disable left stimulus presentation": variable=FlagShowStimLeft, value=0
                    action if "if bias is to the right": condition=Metric_Biased_Strategy > 0
                      action assignment "disable right stimulus presentation": variable=FlagShowStimRight, value=0
                      action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                  action if "if task strategy is NOT biased": condition=abs(Metric_Biased_Strategy) #LE Adjusted_Metric_Correct_Strategy
                    action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                    action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                action if "If do not show right stim": condition=FlagShowStimRight == 0
                  action if "if this is the right stimulus": condition=ImageIndex == 0
                    action if "If discarding right stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND LeftStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard right stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action if "If do not show left stim": condition=FlagShowStimLeft == 0
                  action if "if this is the left stimulus": condition=ImageIndex == 1
                    action if "If discarding left stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND RightStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard left stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action if "If FlagStaircaseHorizSeparation": condition=FlagStaircaseHorizSeparation == 1
                  action assignment "Set the abs_x_pos to current value given by the staircase": variable=abs_stm_pos_x, value=deg_HorizSep_current
                action report "Report": message=Initialize IVP trial ...
                action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                transition conditional "If too many identical stims in a row": target=IVP Finish, condition=FlagRepeatedTrial == 0 #AND ((FlagShowStimRight == 1 #AND FlagShowStimLeft == 1) #OR FlagAlwaysEnforceMaxSeqLeng == 1) #AND ( (ImageIndex == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (ImageIndex == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                transition conditional "If trial contains NOT allowed stimulus": target=IVP Finish, condition=FlagDiscardCurrStim == 1
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
              task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                action report "Report": message=Block the trial ...
                action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
              task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                action report "Report": message=Wait for animal triggering the trial ...
                action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
              task_system_state "IVP Pre-show stimulus"
                action play_sound "Play cue start trial sound": sound=StartTrialSound
                action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
              task_system_state "IVP Show Stimulus"
                action report "Report": message=Triggered stimulus presentation... FlagRepeatedTrial: $FlagRepeatedTrial
                action if "If Shape # 1": condition=ImageIndex == 0
                  action report "Report": message=--- show SHAPE # 1
                  action assignment "set stm_pos_x": variable=stm_pos_x, value=abs_stm_pos_x
                  action assignment "set stm_pos_y": variable=stm_pos_y, value=0
                  action if "If NOT a Correction/repeated Trial": condition=FlagRepeatedTrial == 0
                    action report "Report": message=... inside if: initialize stim counters
                    action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                    action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action report "Report": message=... inside if: play cue stim sound
                    action play_sound "Play right stimulus sound": sound=StimRight
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Sample a random number": variable=FreeRew_CurrRandSamp, value=rand(0,1)
                    action if "Choose whether to give the free reward or not": condition=FreeRew_CurrRandSamp #LE p_FreeRew_current
                      action assignment "Initialize FlagAddFreeRewardToEarnedReward to 0": variable=FlagAddFreeRewardToEarnedReward, value=0
                      action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                      action report "Report": message=... inside if: ##### ATTENTION: gives free reward!!! ########
                action if "If Shape # 2": condition=ImageIndex == 1
                  action report "Report": message=--- show SHAPE # 2
                  action assignment "set stm_pos_x": variable=stm_pos_x, value=-abs_stm_pos_x
                  action assignment "set stm_pos_y": variable=stm_pos_y, value=0
                  action if "If NOT a Correction/repeated Trial": condition=FlagRepeatedTrial == 0
                    action report "Report": message=... inside if: initialize stim counters
                    action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                    action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action report "Report": message=... inside if: play cue stim sound
                    action play_sound "Play left stimulus sound": sound=StimLeft
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Sample a random number": variable=FreeRew_CurrRandSamp, value=rand(0,1)
                    action if "Choose whether to give the free reward or not": condition=FreeRew_CurrRandSamp #LE p_FreeRew_current
                      action assignment "Initialize FlagAddFreeRewardToEarnedReward to 0": variable=FlagAddFreeRewardToEarnedReward, value=0
                      action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                      action report "Report": message=... inside if: ##### ATTENTION: gives free reward!!! ########
                action if "If show visual stimuli": condition=FlagShowVisualStimuli == 1
                  action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                  action queue_stimulus "queue stm": stimulus=Stimulus_Set[ImageIndex]
                  action assignment "Announce stim on": variable=Announce_StimOn, value=1
                  action update_stimulus_display "show stm"
                action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
              task_system_state "IVP Keep playing sound"
                action report "Report": message=Keep playing sound ...
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
              task_system_state "IVP Keep stim ON after cue sound offset"
                action report "Report": message=Keep showing stimulus after sound offset ...
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
              task_system_state "IVP Stimulus Off"
                action dequeue_stimulus "dequeue stm": stimulus=Stimulus_Set[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
              task_system_state "IVP Acquire Port 1": full_name=Acquire State
                action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                action report "Report": message=Response Acquired on Port 1 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to -1 (LEFT port)": variable=WatchResponseSide, value=-1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=ImageIndex == 1
                transition conditional "Wrong Response": target=IVP Failure, condition=ImageIndex == 0
              task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 1 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action if "If_2": condition=1
                  action dequeue_stimulus "dequeue stm": stimulus=Stimulus_Set[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action if "If play outcome sound": condition=FlagPlayOutcomeSound == 1
                  action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If always reward": condition=FlagAlwaysReward == 1
                  action if "If staircase prob free reward is active": condition=FlagStaircaseProbFreeRew ==1
                    action assignment "Update WatchSuccessStair_FreeRew": variable=WatchSuccessStair_FreeRew, value=1
                action if "If FlagStaircaseHorizSeparation": condition=FlagStaircaseHorizSeparation == 1
                  action assignment "Update WatchSuccessStair_FreeRew": variable=WatchSuccessStair_HorizSep, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
              task_system_state "IVP Reward Port 1"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration + (FlagAddFreeRewardToEarnedReward* FlagAlwaysReward*cue_reward_duration)
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput1
                action if "If play outcome sound": condition=FlagPlayOutcomeSound == 1
                  action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Acquire Port 3": full_name=Acquire State
                action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                action report "Report": message=Response Acquired on Port 3 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to 1 (RIGHT port)": variable=WatchResponseSide, value=1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=ImageIndex == 0
                transition conditional "Wrong Response": target=IVP Failure, condition=ImageIndex == 1
              task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                action report "Pre-Reward Port 3": message=Response Acquired ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Stimulus_Set[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action if "If play outcome sound": condition=FlagPlayOutcomeSound == 1
                  action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If always reward": condition=FlagAlwaysReward == 1
                  action if "If staircase prob free reward is active": condition=FlagStaircaseProbFreeRew ==1
                    action assignment "Update WatchSuccessStair_FreeRew": variable=WatchSuccessStair_FreeRew, value=1
                action if "If FlagStaircaseHorizSeparation": condition=FlagStaircaseHorizSeparation == 1
                  action assignment "Update WatchSuccessStair_FreeRew": variable=WatchSuccessStair_HorizSep, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
              task_system_state "IVP Reward Port 3"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration + (FlagAddFreeRewardToEarnedReward* FlagAlwaysReward*cue_reward_duration)
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput3
                action if "If play outcome sound": condition=FlagPlayOutcomeSound == 1
                  action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Additional Licking Time"
                action report "Report": message=Give additional Licking time ...
                action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                  action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
              task_system_state "IVP Failure"
                action report "Report": message=Failed...
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                action if "If play outcome sound": condition=FlagPlayOutcomeSound == 1
                  action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Update failure": variable=failure, value=1
                action if "If always reward": condition=FlagAlwaysReward == 1
                  action if "If staircase prob free reward is active": condition=FlagStaircaseProbFreeRew ==1
                    action assignment "Update WatchSuccessStair_FreeRew": variable=WatchSuccessStair_FreeRew, value=0
                action if "If FlagStaircaseHorizSeparation": condition=FlagStaircaseHorizSeparation == 1
                  action assignment "Update WatchSuccessStair_FreeRew": variable=WatchSuccessStair_HorizSep, value=0
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=0
                action dequeue_stimulus "dequeue stm": stimulus=Stimulus_Set[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
              task_system_state "IVP Punishment Loop Gray"
                action report "Report": message=Failed: punish with gray background
                action play_sound "Play Failure Tone": sound=FailureSound
                action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
              task_system_state "IVP Punishment Loop Black"
                action report "Report": message=Failed: punish with black background pc: $PunishmentCyclesIndex npc: $N_PunishmentCycles
                action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                action play_sound "Play Failure Tone": sound=FailureSound2
                action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition conditional "Repeat current trial as a correction": target=IVP Prepare for correction trial, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
              task_system_state "IVP Prepare for correction trial"
                action report "Report": message=... Prepare for CORRECTIO TRIAL. FlagRepeatedTrial: $FlagRepeatedTrial
                action assignment "Signal that the next will be a correction trial": variable=FlagRepeatedTrial, value=1
                action report "Report": message=.... FlagRepeatedTrial changed to: $FlagRepeatedTrial
                transition direct "Go back to initialize": target=IVP Initialize
              task_system_state "IVP Aborted"
                action report "Report": message=Aborted ...
                action if "If play outcome sound": condition=FlagPlayOutcomeSound == 1
                  action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action dequeue_stimulus "dequeue stm": stimulus=Stimulus_Set[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Ignored"
                action report "Report": message=Ignored ...
                action assignment "Update ignored": variable=ignore, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Idle"
                action report "Report": message=idling...
                action dequeue_stimulus "dequeue stm": stimulus=Stimulus_Set[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
              task_system_state "IVP Finish"
                action report "Report": message=Yielding ...
                action assignment "Reset Flag telling the next is a correction trial to zero": variable=FlagRepeatedTrial, value=0
                action assignment "Compute the Adjusted_Metric_Correct_Strategy": variable=Adjusted_Metric_Correct_Strategy, value=GainFactorCorrectMetric * Metric_Correct_Strategy
                action report "Report": message=Reset FlagRepeatedTrial to $FlagRepeatedTrial
                action assignment "Reset Announce trial no feedback to zero": variable=Announce_TrialNoFeedback, value=0
                action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                action assignment "Reset Announce trial no feedback to zero": variable=Announce_TrialNoFeedback, value=0
                transition yield "Yield": target=~STATE_REF~
        action stop_device_io "StopDeviceIO": device=phidget
        action stop_device_io "StopDeviceIO2": device=NE500
  protocol "Staircase through shape parameters": selection=sequential, nsamples=1, sampling_method=cycles
    block "Staircase Block": selection=sequential, nsamples=1, sampling_method=cycles
      action start_device_io "StartDeviceIO": device=phidget
      action start_device_io "StartDeviceIO2": device=NE500
      list "Staircase Random Shapes List": full_name=List of Random geometrical shapes, description=Randomly sample a task system in which one of the many possible geometrical shapes is used, selection=random_with_replacement, nsamples=5000, sampling_method=cycles
        range_replicator "Staircase Loop on Blob 2 rotated in depth to the Left": from=0, to=12, step=1, variable=ImageIndex
          trial "Trial Blob 2 Dept Rot Left": selection=sequential_ascending, nsamples=1, sampling_method=cycles
            task_system "Staircase Task System Blob 2 Dept Rot Left"
              task_system_state "IVP Initialize": description=Initialize the current trial
                action assignment "Initialize FlagDiscardCurrStim to 0": variable=FlagDiscardCurrStim, value=0
                action assignment "Set BlobIdentityIdx to 1 (since this is Blob 2)": variable=BlobIdentityIdx, value=1
                action assignment "Initialize FlagDiscardTrialWithCurrentDeptRot": variable=FlagDiscardTrialWithCurrentDeptRot, value=0
                action assignment "Choose the current staircase trial type": variable=CurrStairTrial, value=disc_rand(1, N_Staircases)
                action if "if FlagAutomaticBiasSuppression": condition=FlagAutomaticBiasSuppression == 1
                  action if "if task strategy is biased": condition=abs(Metric_Biased_Strategy) > Adjusted_Metric_Correct_Strategy
                    action report "Report": message=>>>>>> STRATEGY IS BIASED!!
                    action if "if bias is to the left": condition=Metric_Biased_Strategy < 0
                      action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                      action assignment "disable left stimulus presentation": variable=FlagShowStimLeft, value=0
                    action if "if bias is to the right": condition=Metric_Biased_Strategy > 0
                      action assignment "disable right stimulus presentation": variable=FlagShowStimRight, value=0
                      action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                  action if "if task strategy is NOT biased": condition=abs(Metric_Biased_Strategy) #LE Adjusted_Metric_Correct_Strategy
                    action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                    action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                action if "If force a fraction of trials to be specific staircases": condition=FlagEnrichSomeStaircases == 1
                  action assignment "Choose the current fraction of trials": variable=CurrTrialsFraction, value=disc_rand(1,TotNumFractionsOfTrialsInCaseOfEnrichment)
                  action report "Report": message=... the sampled fraction of trials is $CurrTrialsFraction
                  action if "If current trial belongs to the enriched fraction": condition=CurrTrialsFraction #LT TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose the current enrighed trial": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If enriched stair 1": condition=CurrTrialsFraction == 1
                      action assignment "Set current stair trial to the enriched 1": variable=CurrStairTrial, value=IdxStairToBeEnriched_1
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                    action if "If enriched stair 2": condition=CurrTrialsFraction == 2
                      action assignment "Set current stair trial to the enriched 2": variable=CurrStairTrial, value=IdxStairToBeEnriched_2
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                  action if "If not an enriched trial": condition=CurrTrialsFraction == TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose from allowed not enriched stairs": variable=CurrStairTrial, value=IdxStairNotToBeEnriched
                    action report "Report": message=... This is the NOT enriched trial type $CurrStairTrial
                action assignment "Initilaize Flag_MatchCurrStairTrial": variable=Flag_MatchCurrStairTrial, value=0
                action if "if Staircase size": condition=(FlagStaircaseSize == 1 #OR FlagStaircaseSize == -1) #AND CurrStairTrial == 1
                  action report "Report": message=####### Staircase ---> SIZE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * (N_sizes_stair_current - geom_rand(p_GeomDistr_stair_size, N_sizes_stair_current))
                  action assignment "Compute stim size current range limit": variable=current_size_limit_stair, value=initial_size_stair + size_stair_step * N_sizes_stair_current
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * disc_rand(0, N_sizes_stair_current)
                  action if "If discard half of the trials": condition=FlagDiscardHalfOfTheTrials == 1
                    action assignment "Sample a number between 1 and 2": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If trial must be discrded": condition=CurrTrialsFraction == 1
                      action assignment "Set FlagDiscardTrialWithCurrentDeptRot to 1": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase Pos HR": condition=(FlagStaircasePosHR == 1 #OR FlagStaircasePosHR == -1) #AND CurrStairTrial == 2
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL RIGHT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * (N_PosHR_stair_current - geom_rand(p_GeomDistr_stair_PosHR, N_PosHR_stair_current))
                  action assignment "Compute stim Pos HR current range limit": variable=current_PosHR_limit_stair, value=initial_PosHR_stair + PosHR_stair_step * N_PosHR_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * disc_rand(1, N_PosHR_stair_current)
                action if "if Staircase Pos HL": condition=(FlagStaircasePosHL == 1 #OR FlagStaircasePosHL == -1) #AND CurrStairTrial == 3
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL LEFT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * (N_PosHL_stair_current - geom_rand(p_GeomDistr_stair_PosHL, N_PosHL_stair_current))
                  action assignment "Compute stim Pos HL current range limit": variable=current_PosHL_limit_stair, value=initial_PosHL_stair + PosHL_stair_step * N_PosHL_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * disc_rand(1, N_PosHL_stair_current)
                action if "if Staircase Pos VU": condition=(FlagStaircasePosVU == 1 #OR FlagStaircasePosVU == -1) #AND CurrStairTrial == 4
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL UP
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * (N_PosVU_stair_current - geom_rand(p_GeomDistr_stair_PosVU, N_PosVU_stair_current))
                  action assignment "Compute stim Pos VU current range limit": variable=current_PosVU_limit_stair, value=initial_PosVU_stair + PosVU_stair_step * N_PosVU_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * disc_rand(1, N_PosVU_stair_current)
                action if "if Staircase Pos VD": condition=(FlagStaircasePosVD == 1 #OR FlagStaircasePosVD == -1) #AND CurrStairTrial == 5
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL DOWN
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * (N_PosVD_stair_current - geom_rand(p_GeomDistr_stair_PosVD, N_PosVD_stair_current))
                  action assignment "Compute stim Pos VD current range limit": variable=current_PosVD_limit_stair, value=initial_PosVD_stair + PosVD_stair_step * N_PosVD_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * disc_rand(1, N_PosVD_stair_current)
                action if "if Staircase Rot CW": condition=(FlagStaircaseRotCW == 1 #OR FlagStaircaseRotCW == -1) #AND CurrStairTrial == 6
                  action report "Report": message=####### Staircase ---> ROTATION CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * (N_RotCW_stair_current - geom_rand(p_GeomDistr_stair_RotCW, N_RotCW_stair_current))
                  action assignment "Compute stim Rot CW current range limit": variable=current_RotCW_limit_stair, value=initial_RotCW_stair + RotCW_stair_step * N_RotCW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * disc_rand(1, N_RotCW_stair_current)
                action if "if Staircase Rot ACW": condition=(FlagStaircaseRotACW == 1 #OR FlagStaircaseRotACW == -1) #AND CurrStairTrial == 7
                  action report "Report": message=####### Staircase ---> ROTATION ANTI-CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * (N_RotACW_stair_current - geom_rand(p_GeomDistr_stair_RotACW, N_RotACW_stair_current))
                  action assignment "Compute stim Rot ACW current range limit": variable=current_RotACW_limit_stair, value=initial_RotACW_stair + RotACW_stair_step * N_RotACW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * disc_rand(1, N_RotACW_stair_current)
                action if "if Staircase RotDept Right always discard trial": condition=(FlagStaircaseDeptRotRight == 1 #OR FlagStaircaseDeptRotRight == -1) #AND CurrStairTrial == 8
                  action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase RotDept Left": condition=(FlagStaircaseDeptRotLeft == 1 #OR FlagStaircaseDeptRotLeft == -1) #AND CurrStairTrial == 9
                  action report "Report": message=####### Staircase ---#GT ROTATION IN DEPTH TO THE LEFT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Rot in Depth L within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotL_stair + DeptRotL_stair_step * (N_DeptRotL_stair_current - geom_rand(p_GeomDistr_stair_DeptRotL, N_DeptRotL_stair_current))
                  action assignment "Compute stim Dept Rot L current range limit": variable=current_DeptRotL_limit_stair, value=initial_DeptRotL_stair + DeptRotL_stair_step * N_DeptRotL_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotL_stair + DeptRotL_stair_step * disc_rand(1, N_DeptRotL_stair_current)
                  action if "If sampled dept rot doesn't match that of current trial": condition=stm_rotation_in_depth #GT (-ImageIndex*DeptRotL_stair_step-MaxDeptRotAngle) #OR stm_rotation_in_depth #LT (-ImageIndex*DeptRotL_stair_step-MaxDeptRotAngle)
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "If do not show left stim": condition=FlagShowStimLeft == 0
                  action if "if this is the left stimulus": condition=BlobIdentityIdx == 1
                    action if "If discarding left stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND RightStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard left stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action if "If do not show right stim": condition=FlagShowStimRight == 0
                  action if "if this is the right stimulus": condition=BlobIdentityIdx == 0
                    action if "If discarding right stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND LeftStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard right stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                transition conditional "if this is a not allowed rotation in depth": target=IVP Finish, condition=FlagDiscardTrialWithCurrentDeptRot == 1
                transition conditional "If too many identical stims in a row": target=IVP Finish, condition=((FlagShowStimRight == 1 #AND FlagShowStimLeft == 1) #OR FlagAlwaysEnforceMaxSeqLeng == 1) #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                transition conditional "if no match with current staircase trial type": target=IVP Finish, condition=Flag_MatchCurrStairTrial == 0
                transition conditional "If trial contains NOT allowed stimulus": target=IVP Finish, condition=FlagDiscardCurrStim == 1
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
              task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                action report "Report": message=Block the trial ...
                action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
              task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                action report "Report": message=Wait for animal triggering the trial ...
                action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
              task_system_state "IVP Pre-show stimulus"
                action play_sound "Play cue start trial sound": sound=StartTrialSound
                action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
              task_system_state "IVP Show Stimulus"
                action report "Report": message=Triggered stimulus presentation...
                action if "If Shape # 1": condition=BlobIdentityIdx == 0
                  action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                  action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play right stimulus sound": sound=StimRight
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                action if "If Shape # 2": condition=BlobIdentityIdx == 1
                  action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                  action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play left stimulus sound": sound=StimLeft
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                action queue_stimulus "queue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                action assignment "Announce stim on": variable=Announce_StimOn, value=1
                action update_stimulus_display "show stm"
                action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
              task_system_state "IVP Keep playing sound"
                action report "Report": message=Keep playing sound ...
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
              task_system_state "IVP Keep stim ON after cue sound offset"
                action report "Report": message=Keep showing stimulus after sound offset ...
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
              task_system_state "IVP Stimulus Off"
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
              task_system_state "IVP Acquire Port 1": full_name=Acquire State
                action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                action report "Report": message=Response Acquired on Port 1 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to -1 (LEFT port)": variable=WatchResponseSide, value=-1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0
              task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 1 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Left is at the staircase current limit": condition=CurrStairTrial == 9 #AND FlagStaircaseDeptRotLeft ==1 #AND stm_rotation_in_depth == current_DeptRotL_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotL": variable=WatchSuccessStair_DeptRotL, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
              task_system_state "IVP Reward Port 1"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput1
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Acquire Port 3": full_name=Acquire State
                action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                action report "Report": message=Response Acquired on Port 3 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to 1 (RIGHT port)": variable=WatchResponseSide, value=1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1
              task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 3 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Left is at the staircase current limit": condition=CurrStairTrial == 9 #AND FlagStaircaseDeptRotLeft ==1 #AND stm_rotation_in_depth == current_DeptRotL_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotL": variable=WatchSuccessStair_DeptRotL, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
              task_system_state "IVP Reward Port 3"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput3
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Additional Licking Time"
                action report "Report": message=Give additional Licking time ...
                action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                  action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
              task_system_state "IVP Failure"
                action report "Report": message=Failed...
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Update failure": variable=failure, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=0
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=0
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=0
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=0
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=0
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=0
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=0
                action if "If stm_rotation dept Left is at the staircase current limit": condition=CurrStairTrial == 9 #AND FlagStaircaseDeptRotLeft ==1 #AND stm_rotation_in_depth == current_DeptRotL_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotL": variable=WatchSuccessStair_DeptRotL, value=0
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=0
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
              task_system_state "IVP Punishment Loop Gray"
                action report "Report": message=Failed: punish with gray background
                action play_sound "Play Failure Tone": sound=FailureSound
                action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
              task_system_state "IVP Punishment Loop Black"
                action report "Report": message=Failed: punish with black background
                action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                action play_sound "Play Failure Tone": sound=FailureSound2
                action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
              task_system_state "IVP Aborted"
                action report "Report": message=Aborted ...
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Ignored"
                action report "Report": message=Ignored ...
                action assignment "Update ignored": variable=ignore, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Idle"
                action report "Report": message=idling...
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
              task_system_state "IVP Finish"
                action assignment "Compute the Adjusted_Metric_Correct_Strategy": variable=Adjusted_Metric_Correct_Strategy, value=GainFactorCorrectMetric * Metric_Correct_Strategy
                action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                transition yield "Yield": target=~STATE_REF~
        range_replicator "Staircase Loop on Blob 1 rotated in depth to the Left": from=0, to=12, step=1, variable=ImageIndex
          trial "Trial Blob 1 Dept Rot Left": selection=sequential_ascending, nsamples=1, sampling_method=cycles
            task_system "Staircase Task System Blob 1 Dept Rot Left"
              task_system_state "IVP Initialize": description=Initialize the current trial
                action assignment "Initialize FlagDiscardCurrStim to 0": variable=FlagDiscardCurrStim, value=0
                action assignment "Set BlobIdentityIdx to 0 (since this is Blob 1)": variable=BlobIdentityIdx, value=0
                action assignment "Initialize FlagDiscardTrialWithCurrentDeptRot": variable=FlagDiscardTrialWithCurrentDeptRot, value=0
                action if "if FlagAutomaticBiasSuppression": condition=FlagAutomaticBiasSuppression == 1
                  action if "if task strategy is biased": condition=abs(Metric_Biased_Strategy) > Adjusted_Metric_Correct_Strategy
                    action report "Report": message=>>>>>> STRATEGY IS BIASED!!
                    action if "if bias is to the left": condition=Metric_Biased_Strategy < 0
                      action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                      action assignment "disable left stimulus presentation": variable=FlagShowStimLeft, value=0
                    action if "if bias is to the right": condition=Metric_Biased_Strategy > 0
                      action assignment "disable right stimulus presentation": variable=FlagShowStimRight, value=0
                      action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                  action if "if task strategy is NOT biased": condition=abs(Metric_Biased_Strategy) #LE Adjusted_Metric_Correct_Strategy
                    action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                    action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                action assignment "Choose the current staircase trial type": variable=CurrStairTrial, value=disc_rand(1, N_Staircases)
                action if "If force a fraction of trials to be specific staircases": condition=FlagEnrichSomeStaircases == 1
                  action assignment "Choose the current fraction of trials": variable=CurrTrialsFraction, value=disc_rand(1,TotNumFractionsOfTrialsInCaseOfEnrichment)
                  action report "Report": message=... the sampled fraction of trials is $CurrTrialsFraction
                  action if "If current trial belongs to the enriched fraction": condition=CurrTrialsFraction #LT TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose the current enrighed trial": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If enriched stair 1": condition=CurrTrialsFraction == 1
                      action assignment "Set current stair trial to the enriched 1": variable=CurrStairTrial, value=IdxStairToBeEnriched_1
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                    action if "If enriched stair 2": condition=CurrTrialsFraction == 2
                      action assignment "Set current stair trial to the enriched 2": variable=CurrStairTrial, value=IdxStairToBeEnriched_2
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                  action if "If not an enriched trial": condition=CurrTrialsFraction == TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose from allowed not enriched stairs": variable=CurrStairTrial, value=IdxStairNotToBeEnriched
                    action report "Report": message=... This is the NOT enriched trial type $CurrStairTrial
                action assignment "Initilaize Flag_MatchCurrStairTrial": variable=Flag_MatchCurrStairTrial, value=0
                action if "if Staircase size": condition=(FlagStaircaseSize == 1 #OR FlagStaircaseSize == -1) #AND CurrStairTrial == 1
                  action report "Report": message=####### Staircase ---> SIZE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * (N_sizes_stair_current - geom_rand(p_GeomDistr_stair_size, N_sizes_stair_current))
                  action assignment "Compute stim size current range limit": variable=current_size_limit_stair, value=initial_size_stair + size_stair_step * N_sizes_stair_current
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * disc_rand(0, N_sizes_stair_current)
                  action if "If discard half of the trials": condition=FlagDiscardHalfOfTheTrials == 1
                    action assignment "Sample a number between 1 and 2": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If trial must be discrded": condition=CurrTrialsFraction == 1
                      action assignment "Set FlagDiscardTrialWithCurrentDeptRot to 1": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase Pos HR": condition=(FlagStaircasePosHR == 1 #OR FlagStaircasePosHR == -1) #AND CurrStairTrial == 2
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL RIGHT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * (N_PosHR_stair_current - geom_rand(p_GeomDistr_stair_PosHR, N_PosHR_stair_current))
                  action assignment "Compute stim Pos HR current range limit": variable=current_PosHR_limit_stair, value=initial_PosHR_stair + PosHR_stair_step * N_PosHR_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * disc_rand(1, N_PosHR_stair_current)
                action if "if Staircase Pos HL": condition=(FlagStaircasePosHL == 1 #OR FlagStaircasePosHL == -1) #AND CurrStairTrial == 3
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL LEFT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * (N_PosHL_stair_current - geom_rand(p_GeomDistr_stair_PosHL, N_PosHL_stair_current))
                  action assignment "Compute stim Pos HL current range limit": variable=current_PosHL_limit_stair, value=initial_PosHL_stair + PosHL_stair_step * N_PosHL_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * disc_rand(1, N_PosHL_stair_current)
                action if "if Staircase Pos VU": condition=(FlagStaircasePosVU == 1 #OR FlagStaircasePosVU == -1) #AND CurrStairTrial == 4
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL UP
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * (N_PosVU_stair_current - geom_rand(p_GeomDistr_stair_PosVU, N_PosVU_stair_current))
                  action assignment "Compute stim Pos VU current range limit": variable=current_PosVU_limit_stair, value=initial_PosVU_stair + PosVU_stair_step * N_PosVU_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * disc_rand(1, N_PosVU_stair_current)
                action if "if Staircase Pos VD": condition=(FlagStaircasePosVD == 1 #OR FlagStaircasePosVD == -1) #AND CurrStairTrial == 5
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL DOWN
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * (N_PosVD_stair_current - geom_rand(p_GeomDistr_stair_PosVD, N_PosVD_stair_current))
                  action assignment "Compute stim Pos VD current range limit": variable=current_PosVD_limit_stair, value=initial_PosVD_stair + PosVD_stair_step * N_PosVD_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * disc_rand(1, N_PosVD_stair_current)
                action if "if Staircase Rot CW": condition=(FlagStaircaseRotCW == 1 #OR FlagStaircaseRotCW == -1) #AND CurrStairTrial == 6
                  action report "Report": message=####### Staircase ---> ROTATION CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * (N_RotCW_stair_current - geom_rand(p_GeomDistr_stair_RotCW, N_RotCW_stair_current))
                  action assignment "Compute stim Rot CW current range limit": variable=current_RotCW_limit_stair, value=initial_RotCW_stair + RotCW_stair_step * N_RotCW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * disc_rand(1, N_RotCW_stair_current)
                action if "if Staircase Rot ACW": condition=(FlagStaircaseRotACW == 1 #OR FlagStaircaseRotACW == -1) #AND CurrStairTrial == 7
                  action report "Report": message=####### Staircase ---> ROTATION ANTI-CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * (N_RotACW_stair_current - geom_rand(p_GeomDistr_stair_RotACW, N_RotACW_stair_current))
                  action assignment "Compute stim Rot ACW current range limit": variable=current_RotACW_limit_stair, value=initial_RotACW_stair + RotACW_stair_step * N_RotACW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #LT N_DeptRotL_stair_upper_limit
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * disc_rand(1, N_RotACW_stair_current)
                action if "if Staircase RotDept Right always discard trial": condition=(FlagStaircaseDeptRotRight == 1 #OR FlagStaircaseDeptRotRight == -1) #AND CurrStairTrial == 8
                  action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase RotDept Left": condition=(FlagStaircaseDeptRotLeft == 1 #OR FlagStaircaseDeptRotLeft == -1) #AND CurrStairTrial == 9
                  action report "Report": message=####### Staircase ---#GT ROTATION IN DEPTH TO THE LEFT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Rot in Depth L within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotL_stair + DeptRotL_stair_step * (N_DeptRotL_stair_current - geom_rand(p_GeomDistr_stair_DeptRotL, N_DeptRotL_stair_current))
                  action assignment "Compute stim Dept Rot L current range limit": variable=current_DeptRotL_limit_stair, value=initial_DeptRotL_stair + DeptRotL_stair_step * N_DeptRotL_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotL_stair + DeptRotL_stair_step * disc_rand(1, N_DeptRotL_stair_current)
                  action if "If sampled dept rot doesn't match that of current trial": condition=stm_rotation_in_depth #GT (-ImageIndex*DeptRotL_stair_step-MaxDeptRotAngle) #OR stm_rotation_in_depth #LT (-ImageIndex*DeptRotL_stair_step-MaxDeptRotAngle)
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "If do not show right stim": condition=FlagShowStimRight == 0
                  action if "if this is the right stimulus": condition=BlobIdentityIdx == 0
                    action if "If discarding right stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND LeftStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard right stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action if "If do not show left stim": condition=FlagShowStimLeft == 0
                  action if "if this is the left stimulus": condition=BlobIdentityIdx == 1
                    action if "If discarding left stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND RightStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard left stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                transition conditional "if this is a not allowed rotation in depth": target=IVP Finish, condition=FlagDiscardTrialWithCurrentDeptRot == 1
                transition conditional "If too many identical stims in a row": target=IVP Finish, condition=((FlagShowStimRight == 1 #AND FlagShowStimLeft == 1) #OR FlagAlwaysEnforceMaxSeqLeng == 1) #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                transition conditional "if no match with current staircase trial type": target=IVP Finish, condition=Flag_MatchCurrStairTrial == 0
                transition conditional "If trial contains NOT allowed stimulus": target=IVP Finish, condition=FlagDiscardCurrStim == 1
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
              task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                action report "Report": message=Block the trial ...
                action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
              task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                action report "Report": message=Wait for animal triggering the trial ...
                action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
              task_system_state "IVP Pre-show stimulus"
                action play_sound "Play cue start trial sound": sound=StartTrialSound
                action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
              task_system_state "IVP Show Stimulus"
                action report "Report": message=Triggered stimulus presentation...
                action if "If Shape # 1": condition=BlobIdentityIdx == 0
                  action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                  action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play right stimulus sound": sound=StimRight
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                action if "If Shape # 2": condition=BlobIdentityIdx == 1
                  action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                  action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play left stimulus sound": sound=StimLeft
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                action queue_stimulus "queue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                action assignment "Announce stim on": variable=Announce_StimOn, value=1
                action update_stimulus_display "show stm"
                action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
              task_system_state "IVP Keep playing sound"
                action report "Report": message=Keep playing sound ...
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
              task_system_state "IVP Keep stim ON after cue sound offset"
                action report "Report": message=Keep showing stimulus after sound offset ...
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
              task_system_state "IVP Stimulus Off"
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
              task_system_state "IVP Acquire Port 1": full_name=Acquire State
                action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                action report "Report": message=Response Acquired on Port 1 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to -1 (LEFT port)": variable=WatchResponseSide, value=-1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0
              task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 1 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Left is at the staircase current limit": condition=CurrStairTrial == 9 #AND FlagStaircaseDeptRotLeft ==1 #AND stm_rotation_in_depth == current_DeptRotL_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotL": variable=WatchSuccessStair_DeptRotL, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
              task_system_state "IVP Reward Port 1"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput1
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Acquire Port 3": full_name=Acquire State
                action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                action report "Report": message=Response Acquired on Port 3 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to 1 (RIGHT port)": variable=WatchResponseSide, value=1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1
              task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 3 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Left is at the staircase current limit": condition=CurrStairTrial == 9 #AND FlagStaircaseDeptRotLeft ==1 #AND stm_rotation_in_depth == current_DeptRotL_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotL": variable=WatchSuccessStair_DeptRotL, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
              task_system_state "IVP Reward Port 3"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput3
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Additional Licking Time"
                action report "Report": message=Give additional Licking time ...
                action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                  action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
              task_system_state "IVP Failure"
                action report "Report": message=Failed...
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Update failure": variable=failure, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=0
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=0
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=0
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=0
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=0
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=0
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=0
                action if "If stm_rotation dept Left is at the staircase current limit": condition=CurrStairTrial == 9 #AND FlagStaircaseDeptRotLeft ==1 #AND stm_rotation_in_depth == current_DeptRotL_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotL": variable=WatchSuccessStair_DeptRotL, value=0
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=0
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
              task_system_state "IVP Punishment Loop Gray"
                action report "Report": message=Failed: punish with gray background
                action play_sound "Play Failure Tone": sound=FailureSound
                action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
              task_system_state "IVP Punishment Loop Black"
                action report "Report": message=Failed: punish with black background
                action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                action play_sound "Play Failure Tone": sound=FailureSound2
                action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
              task_system_state "IVP Aborted"
                action report "Report": message=Aborted ...
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Ignored"
                action report "Report": message=Ignored ...
                action assignment "Update ignored": variable=ignore, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Idle"
                action report "Report": message=idling...
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
              task_system_state "IVP Finish"
                action assignment "Compute the Adjusted_Metric_Correct_Strategy": variable=Adjusted_Metric_Correct_Strategy, value=GainFactorCorrectMetric * Metric_Correct_Strategy
                action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                transition yield "Yield": target=~STATE_REF~
        range_replicator "Staircase Loop on Blob 1 rotated in depth to the Right": from=0, to=12, step=1, variable=ImageIndex
          trial "Trial Blob 1 Dept Rot Right": selection=sequential_ascending, nsamples=1, sampling_method=cycles
            task_system "Staircase Task System Blob 1 Dept Rot Right"
              task_system_state "IVP Initialize": description=Initialize the current trial
                action assignment "Initialize FlagDiscardCurrStim to 0": variable=FlagDiscardCurrStim, value=0
                action assignment "Set BlobIdentityIdx to 0 (since this is Blob 1)": variable=BlobIdentityIdx, value=0
                action assignment "Initialize FlagDiscardTrialWithCurrentDeptRot": variable=FlagDiscardTrialWithCurrentDeptRot, value=0
                action if "if FlagAutomaticBiasSuppression": condition=FlagAutomaticBiasSuppression == 1
                  action if "if task strategy is biased": condition=abs(Metric_Biased_Strategy) > Adjusted_Metric_Correct_Strategy
                    action report "Report": message=>>>>>> STRATEGY IS BIASED!!
                    action if "if bias is to the left": condition=Metric_Biased_Strategy < 0
                      action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                      action assignment "disable left stimulus presentation": variable=FlagShowStimLeft, value=0
                    action if "if bias is to the right": condition=Metric_Biased_Strategy > 0
                      action assignment "disable right stimulus presentation": variable=FlagShowStimRight, value=0
                      action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                  action if "if task strategy is NOT biased": condition=abs(Metric_Biased_Strategy) #LE Adjusted_Metric_Correct_Strategy
                    action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                    action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                action assignment "Choose the current staircase trial type": variable=CurrStairTrial, value=disc_rand(1, N_Staircases)
                action if "If force a fraction of trials to be specific staircases": condition=FlagEnrichSomeStaircases == 1
                  action assignment "Choose the current fraction of trials": variable=CurrTrialsFraction, value=disc_rand(1,TotNumFractionsOfTrialsInCaseOfEnrichment)
                  action report "Report": message=... the sampled fraction of trials is $CurrTrialsFraction
                  action if "If current trial belongs to the enriched fraction": condition=CurrTrialsFraction #LT TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose the current enrighed trial": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If enriched stair 1": condition=CurrTrialsFraction == 1
                      action assignment "Set current stair trial to the enriched 1": variable=CurrStairTrial, value=IdxStairToBeEnriched_1
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                    action if "If enriched stair 2": condition=CurrTrialsFraction == 2
                      action assignment "Set current stair trial to the enriched 2": variable=CurrStairTrial, value=IdxStairToBeEnriched_2
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                  action if "If not an enriched trial": condition=CurrTrialsFraction == TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose from allowed not enriched stairs": variable=CurrStairTrial, value=IdxStairNotToBeEnriched
                    action report "Report": message=... This is the NOT enriched trial type $CurrStairTrial
                action assignment "Initilaize Flag_MatchCurrStairTrial": variable=Flag_MatchCurrStairTrial, value=0
                action if "if Staircase size": condition=(FlagStaircaseSize == 1 #OR FlagStaircaseSize == -1) #AND CurrStairTrial == 1
                  action report "Report": message=####### Staircase ---> SIZE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * (N_sizes_stair_current - geom_rand(p_GeomDistr_stair_size, N_sizes_stair_current))
                  action assignment "Compute stim size current range limit": variable=current_size_limit_stair, value=initial_size_stair + size_stair_step * N_sizes_stair_current
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * disc_rand(0, N_sizes_stair_current)
                  action if "If discard half of the trials": condition=FlagDiscardHalfOfTheTrials == 1
                    action assignment "Sample a number between 1 and 2": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If trial must be discrded": condition=CurrTrialsFraction == 1
                      action assignment "Set FlagDiscardTrialWithCurrentDeptRot to 1": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase Pos HR": condition=(FlagStaircasePosHR == 1 #OR FlagStaircasePosHR == -1) #AND CurrStairTrial == 2
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL RIGHT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * (N_PosHR_stair_current - geom_rand(p_GeomDistr_stair_PosHR, N_PosHR_stair_current))
                  action assignment "Compute stim Pos HR current range limit": variable=current_PosHR_limit_stair, value=initial_PosHR_stair + PosHR_stair_step * N_PosHR_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * disc_rand(1, N_PosHR_stair_current)
                action if "if Staircase Pos HL": condition=(FlagStaircasePosHL == 1 #OR FlagStaircasePosHL == -1) #AND CurrStairTrial == 3
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL LEFT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * (N_PosHL_stair_current - geom_rand(p_GeomDistr_stair_PosHL, N_PosHL_stair_current))
                  action assignment "Compute stim Pos HL current range limit": variable=current_PosHL_limit_stair, value=initial_PosHL_stair + PosHL_stair_step * N_PosHL_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * disc_rand(1, N_PosHL_stair_current)
                action if "if Staircase Pos VU": condition=(FlagStaircasePosVU == 1 #OR FlagStaircasePosVU == -1) #AND CurrStairTrial == 4
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL UP
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * (N_PosVU_stair_current - geom_rand(p_GeomDistr_stair_PosVU, N_PosVU_stair_current))
                  action assignment "Compute stim Pos VU current range limit": variable=current_PosVU_limit_stair, value=initial_PosVU_stair + PosVU_stair_step * N_PosVU_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * disc_rand(1, N_PosVU_stair_current)
                action if "if Staircase Pos VD": condition=(FlagStaircasePosVD == 1 #OR FlagStaircasePosVD == -1) #AND CurrStairTrial == 5
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL DOWN
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * (N_PosVD_stair_current - geom_rand(p_GeomDistr_stair_PosVD, N_PosVD_stair_current))
                  action assignment "Compute stim Pos VD current range limit": variable=current_PosVD_limit_stair, value=initial_PosVD_stair + PosVD_stair_step * N_PosVD_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * disc_rand(1, N_PosVD_stair_current)
                action if "if Staircase Rot CW": condition=(FlagStaircaseRotCW == 1 #OR FlagStaircaseRotCW == -1) #AND CurrStairTrial == 6
                  action report "Report": message=####### Staircase ---> ROTATION CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * (N_RotCW_stair_current - geom_rand(p_GeomDistr_stair_RotCW, N_RotCW_stair_current))
                  action assignment "Compute stim Rot CW current range limit": variable=current_RotCW_limit_stair, value=initial_RotCW_stair + RotCW_stair_step * N_RotCW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * disc_rand(1, N_RotCW_stair_current)
                action if "if Staircase Rot ACW": condition=(FlagStaircaseRotACW == 1 #OR FlagStaircaseRotACW == -1) #AND CurrStairTrial == 7
                  action report "Report": message=####### Staircase ---> ROTATION ANTI-CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * (N_RotACW_stair_current - geom_rand(p_GeomDistr_stair_RotACW, N_RotACW_stair_current))
                  action assignment "Compute stim Rot ACW current range limit": variable=current_RotACW_limit_stair, value=initial_RotACW_stair + RotACW_stair_step * N_RotACW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * disc_rand(1, N_RotACW_stair_current)
                action if "if Staircase RotDept Right": condition=(FlagStaircaseDeptRotRight == 1 #OR FlagStaircaseDeptRotRight == -1) #AND CurrStairTrial == 8
                  action report "Report": message=####### Staircase ---#GT ROTATION IN DEPTH TO THE RIGHT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Rot in Depth R within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotR_stair + DeptRotR_stair_step * (N_DeptRotR_stair_current - geom_rand(p_GeomDistr_stair_DeptRotR, N_DeptRotR_stair_current))
                  action assignment "Compute stim Dept Rot R current range limit": variable=current_DeptRotR_limit_stair, value=initial_DeptRotR_stair + DeptRotR_stair_step * N_DeptRotR_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotR_stair + DeptRotR_stair_step * disc_rand(1, N_DeptRotR_stair_current)
                  action if "If sampled dept rot doesn't match that of current trial": condition=stm_rotation_in_depth #GT ImageIndex*DeptRotR_stair_step #OR stm_rotation_in_depth #LT ImageIndex*DeptRotR_stair_step
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase RotDept Left always discard trial": condition=(FlagStaircaseDeptRotLeft == 1 #OR FlagStaircaseDeptRotLeft == -1) #AND CurrStairTrial == 9
                  action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "If do not show left stim": condition=FlagShowStimLeft == 0
                  action if "if this is the left stimulus": condition=BlobIdentityIdx == 1
                    action if "If discarding left stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND RightStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard left stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action if "If do not show right stim": condition=FlagShowStimRight == 0
                  action if "if this is the right stimulus": condition=BlobIdentityIdx == 0
                    action if "If discarding right stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND LeftStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard right stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                transition conditional "if this is a not allowed rotation in depth": target=IVP Finish, condition=FlagDiscardTrialWithCurrentDeptRot == 1
                transition conditional "If too many identical stims in a row": target=IVP Finish, condition=((FlagShowStimRight == 1 #AND FlagShowStimLeft == 1) #OR FlagAlwaysEnforceMaxSeqLeng == 1) #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                transition conditional "if no match with current staircase trial type": target=IVP Finish, condition=Flag_MatchCurrStairTrial == 0
                transition conditional "If trial contains NOT allowed stimulus": target=IVP Finish, condition=FlagDiscardCurrStim == 1
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
              task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                action report "Report": message=Block the trial ...
                action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
              task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                action report "Report": message=Wait for animal triggering the trial ...
                action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
              task_system_state "IVP Pre-show stimulus"
                action play_sound "Play cue start trial sound": sound=StartTrialSound
                action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
              task_system_state "IVP Show Stimulus"
                action report "Report": message=Triggered stimulus presentation...
                action if "If Shape # 1": condition=BlobIdentityIdx == 0
                  action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                  action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play right stimulus sound": sound=StimRight
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                action if "If Shape # 2": condition=BlobIdentityIdx == 1
                  action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                  action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play left stimulus sound": sound=StimLeft
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                action queue_stimulus "queue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                action assignment "Announce stim on": variable=Announce_StimOn, value=1
                action update_stimulus_display "show stm"
                action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
              task_system_state "IVP Keep playing sound"
                action report "Report": message=Keep playing sound ...
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
              task_system_state "IVP Keep stim ON after cue sound offset"
                action report "Report": message=Keep showing stimulus after sound offset ...
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
              task_system_state "IVP Stimulus Off"
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
              task_system_state "IVP Acquire Port 1": full_name=Acquire State
                action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                action report "Report": message=Response Acquired on Port 1 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to -1 (LEFT port)": variable=WatchResponseSide, value=-1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0
              task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 1 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Right is at the staircase current limit": condition=CurrStairTrial == 8 #AND FlagStaircaseDeptRotRight ==1 #AND stm_rotation_in_depth == current_DeptRotR_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotR": variable=WatchSuccessStair_DeptRotR, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
              task_system_state "IVP Reward Port 1"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput1
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Acquire Port 3": full_name=Acquire State
                action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                action report "Report": message=Response Acquired on Port 3 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to 1 (RIGHT port)": variable=WatchResponseSide, value=1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1
              task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 3 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Right is at the staircase current limit": condition=CurrStairTrial == 8 #AND FlagStaircaseDeptRotRight ==1 #AND stm_rotation_in_depth == current_DeptRotR_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotR": variable=WatchSuccessStair_DeptRotR, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
              task_system_state "IVP Reward Port 3"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput3
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Additional Licking Time"
                action report "Report": message=Give additional Licking time ...
                action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                  action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
              task_system_state "IVP Failure"
                action report "Report": message=Failed...
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Update failure": variable=failure, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=0
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=0
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=0
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=0
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=0
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=0
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=0
                action if "If stm_rotation dept Right is at the staircase current limit": condition=CurrStairTrial == 8 #AND FlagStaircaseDeptRotRight ==1 #AND stm_rotation_in_depth == current_DeptRotR_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotR": variable=WatchSuccessStair_DeptRotR, value=0
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=0
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
              task_system_state "IVP Punishment Loop Gray"
                action report "Report": message=Failed: punish with gray background
                action play_sound "Play Failure Tone": sound=FailureSound
                action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
              task_system_state "IVP Punishment Loop Black"
                action report "Report": message=Failed: punish with black background
                action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                action play_sound "Play Failure Tone": sound=FailureSound2
                action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
              task_system_state "IVP Aborted"
                action report "Report": message=Aborted ...
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Ignored"
                action report "Report": message=Ignored ...
                action assignment "Update ignored": variable=ignore, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Idle"
                action report "Report": message=idling...
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
              task_system_state "IVP Finish"
                action assignment "Compute the Adjusted_Metric_Correct_Strategy": variable=Adjusted_Metric_Correct_Strategy, value=GainFactorCorrectMetric * Metric_Correct_Strategy
                action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                transition yield "Yield": target=~STATE_REF~
        range_replicator "Staircase Loop on Blob 2 rotated in depth to the Right": from=0, to=12, step=1, variable=ImageIndex
          trial "Trial Blob 2 Dept Rot Right": selection=sequential_ascending, nsamples=1, sampling_method=cycles
            task_system "Staircase Task System Blob 2 Dept Rot Right"
              task_system_state "IVP Initialize": description=Initialize the current trial
                action assignment "Initialize FlagDiscardCurrStim to 0": variable=FlagDiscardCurrStim, value=0
                action assignment "Set BlobIdentityIdx to 1 (since this is Blob 2)": variable=BlobIdentityIdx, value=1
                action assignment "Initialize FlagDiscardTrialWithCurrentDeptRot": variable=FlagDiscardTrialWithCurrentDeptRot, value=0
                action if "if FlagAutomaticBiasSuppression": condition=FlagAutomaticBiasSuppression == 1
                  action if "if task strategy is biased": condition=abs(Metric_Biased_Strategy) > Adjusted_Metric_Correct_Strategy
                    action report "Report": message=>>>>>> STRATEGY IS BIASED!!
                    action if "if bias is to the left": condition=Metric_Biased_Strategy < 0
                      action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                      action assignment "disable left stimulus presentation": variable=FlagShowStimLeft, value=0
                    action if "if bias is to the right": condition=Metric_Biased_Strategy > 0
                      action assignment "disable right stimulus presentation": variable=FlagShowStimRight, value=0
                      action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                  action if "if task strategy is NOT biased": condition=abs(Metric_Biased_Strategy) #LE Adjusted_Metric_Correct_Strategy
                    action assignment "enable left stimulus presentation": variable=FlagShowStimLeft, value=1
                    action assignment "enable right stimulus presentation": variable=FlagShowStimRight, value=1
                action assignment "Choose the current staircase trial type": variable=CurrStairTrial, value=disc_rand(1, N_Staircases)
                action if "If force a fraction of trials to be specific staircases": condition=FlagEnrichSomeStaircases == 1
                  action assignment "Choose the current fraction of trials": variable=CurrTrialsFraction, value=disc_rand(1,TotNumFractionsOfTrialsInCaseOfEnrichment)
                  action report "Report": message=... the sampled fraction of trials is $CurrTrialsFraction
                  action if "If current trial belongs to the enriched fraction": condition=CurrTrialsFraction #LT TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose the current enrighed trial": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If enriched stair 1": condition=CurrTrialsFraction == 1
                      action assignment "Set current stair trial to the enriched 1": variable=CurrStairTrial, value=IdxStairToBeEnriched_1
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                    action if "If enriched stair 2": condition=CurrTrialsFraction == 2
                      action assignment "Set current stair trial to the enriched 2": variable=CurrStairTrial, value=IdxStairToBeEnriched_2
                      action report "Report": message=... This is the enriched trial type $CurrStairTrial
                  action if "If not an enriched trial": condition=CurrTrialsFraction == TotNumFractionsOfTrialsInCaseOfEnrichment
                    action assignment "Choose from allowed not enriched stairs": variable=CurrStairTrial, value=IdxStairNotToBeEnriched
                    action report "Report": message=... This is the NOT enriched trial type $CurrStairTrial
                action assignment "Initilaize Flag_MatchCurrStairTrial": variable=Flag_MatchCurrStairTrial, value=0
                action if "if Staircase size": condition=(FlagStaircaseSize == 1 #OR FlagStaircaseSize == -1) #AND CurrStairTrial == 1
                  action report "Report": message=####### Staircase ---> SIZE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * (N_sizes_stair_current - geom_rand(p_GeomDistr_stair_size, N_sizes_stair_current))
                  action assignment "Compute stim size current range limit": variable=current_size_limit_stair, value=initial_size_stair + size_stair_step * N_sizes_stair_current
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim size within allowed range": variable=stm_size, value=initial_size_stair + size_stair_step * disc_rand(0, N_sizes_stair_current)
                  action if "If discard half of the trials": condition=FlagDiscardHalfOfTheTrials == 1
                    action assignment "Sample a number between 1 and 2": variable=CurrTrialsFraction, value=disc_rand(1, 2)
                    action if "If trial must be discrded": condition=CurrTrialsFraction == 1
                      action assignment "Set FlagDiscardTrialWithCurrentDeptRot to 1": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase Pos HR": condition=(FlagStaircasePosHR == 1 #OR FlagStaircasePosHR == -1) #AND CurrStairTrial == 2
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL RIGHT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * (N_PosHR_stair_current - geom_rand(p_GeomDistr_stair_PosHR, N_PosHR_stair_current))
                  action assignment "Compute stim Pos HR current range limit": variable=current_PosHR_limit_stair, value=initial_PosHR_stair + PosHR_stair_step * N_PosHR_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HR within allowed range": variable=stm_pos_x, value=initial_PosHR_stair + PosHR_stair_step * disc_rand(1, N_PosHR_stair_current)
                action if "if Staircase Pos HL": condition=(FlagStaircasePosHL == 1 #OR FlagStaircasePosHL == -1) #AND CurrStairTrial == 3
                  action report "Report": message=####### Staircase ---> POSITION HORIZONTAL LEFT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * (N_PosHL_stair_current - geom_rand(p_GeomDistr_stair_PosHL, N_PosHL_stair_current))
                  action assignment "Compute stim Pos HL current range limit": variable=current_PosHL_limit_stair, value=initial_PosHL_stair + PosHL_stair_step * N_PosHL_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Pos HL within allowed range": variable=stm_pos_x, value=initial_PosHL_stair + PosHL_stair_step * disc_rand(1, N_PosHL_stair_current)
                action if "if Staircase Pos VU": condition=(FlagStaircasePosVU == 1 #OR FlagStaircasePosVU == -1) #AND CurrStairTrial == 4
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL UP
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * (N_PosVU_stair_current - geom_rand(p_GeomDistr_stair_PosVU, N_PosVU_stair_current))
                  action assignment "Compute stim Pos VU current range limit": variable=current_PosVU_limit_stair, value=initial_PosVU_stair + PosVU_stair_step * N_PosVU_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VU within allowed range": variable=stm_pos_y, value=initial_PosVU_stair + PosVU_stair_step * disc_rand(1, N_PosVU_stair_current)
                action if "if Staircase Pos VD": condition=(FlagStaircasePosVD == 1 #OR FlagStaircasePosVD == -1) #AND CurrStairTrial == 5
                  action report "Report": message=####### Staircase ---> POSITION VERTICAL DOWN
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * (N_PosVD_stair_current - geom_rand(p_GeomDistr_stair_PosVD, N_PosVD_stair_current))
                  action assignment "Compute stim Pos VD current range limit": variable=current_PosVD_limit_stair, value=initial_PosVD_stair + PosVD_stair_step * N_PosVD_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action assignment "Sample stim Pos VD within allowed range": variable=stm_pos_y, value=initial_PosVD_stair + PosVD_stair_step * disc_rand(1, N_PosVD_stair_current)
                action if "if Staircase Rot CW": condition=(FlagStaircaseRotCW == 1 #OR FlagStaircaseRotCW == -1) #AND CurrStairTrial == 6
                  action report "Report": message=####### Staircase ---> ROTATION CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * (N_RotCW_stair_current - geom_rand(p_GeomDistr_stair_RotCW, N_RotCW_stair_current))
                  action assignment "Compute stim Rot CW current range limit": variable=current_RotCW_limit_stair, value=initial_RotCW_stair + RotCW_stair_step * N_RotCW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation, value=initial_RotCW_stair + RotCW_stair_step * disc_rand(1, N_RotCW_stair_current)
                action if "if Staircase Rot ACW": condition=(FlagStaircaseRotACW == 1 #OR FlagStaircaseRotACW == -1) #AND CurrStairTrial == 7
                  action report "Report": message=####### Staircase ---> ROTATION ANTI-CLOCKWISE
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim ROT ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * (N_RotACW_stair_current - geom_rand(p_GeomDistr_stair_RotACW, N_RotACW_stair_current))
                  action assignment "Compute stim Rot ACW current range limit": variable=current_RotACW_limit_stair, value=initial_RotACW_stair + RotACW_stair_step * N_RotACW_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation in depth to default": variable=stm_rotation_in_depth, value=Default_Rotation_in_Depth
                  action if "If stimulus is rotated in depth": condition=ImageIndex #GT 0
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot ACW within allowed range": variable=stm_rotation, value=initial_RotACW_stair + RotACW_stair_step * disc_rand(1, N_RotACW_stair_current)
                action if "if Staircase RotDept Right": condition=(FlagStaircaseDeptRotRight == 1 #OR FlagStaircaseDeptRotRight == -1) #AND CurrStairTrial == 8
                  action report "Report": message=####### Staircase ---#GT ROTATION IN DEPTH TO THE RIGHT
                  action assignment "Set Flag_MatchCurrStairTrial to true": variable=Flag_MatchCurrStairTrial, value=1
                  action assignment "Sample stim Rot in Depth R within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotR_stair + DeptRotR_stair_step * (N_DeptRotR_stair_current - geom_rand(p_GeomDistr_stair_DeptRotR, N_DeptRotR_stair_current))
                  action assignment "Compute stim Dept Rot R current range limit": variable=current_DeptRotR_limit_stair, value=initial_DeptRotR_stair + DeptRotR_stair_step * N_DeptRotR_stair_current
                  action assignment "Set stm_size to default": variable=stm_size, value=Default_size_for_StairRotation
                  action assignment "Set stm_pos_x to default": variable=stm_pos_x, value=Default_PosH
                  action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                  action assignment "Set stm_rotation to default": variable=stm_rotation, value=Default_Rotation
                  action if "If sample from uniform distribution": condition=FlagSampUniformDistr == 1
                    action report "Report": message=Sample from uniform distribution ...
                    action assignment "Sample stim Rot CW within allowed range": variable=stm_rotation_in_depth, value=initial_DeptRotR_stair + DeptRotR_stair_step * disc_rand(1, N_DeptRotR_stair_current)
                  action if "If sampled dept rot doesn't match that of current trial": condition=stm_rotation_in_depth #GT ImageIndex*DeptRotR_stair_step #OR stm_rotation_in_depth #LT ImageIndex*DeptRotR_stair_step
                    action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "if Staircase RotDept Left always discard trial": condition=(FlagStaircaseDeptRotLeft == 1 #OR FlagStaircaseDeptRotLeft == -1) #AND CurrStairTrial == 9
                  action assignment "Discard current trial": variable=FlagDiscardTrialWithCurrentDeptRot, value=1
                action if "If do not show right stim": condition=FlagShowStimRight == 0
                  action if "if this is the right stimulus": condition=BlobIdentityIdx == 0
                    action if "If discarding right stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND LeftStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard right stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action if "If do not show left stim": condition=FlagShowStimLeft == 0
                  action if "if this is the left stimulus": condition=BlobIdentityIdx == 1
                    action if "If discarding left stimulus is allowed": condition=FlagAlwaysEnforceMaxSeqLeng == 0 #OR (FlagAlwaysEnforceMaxSeqLeng == 1 #AND RightStim_Counter #LT MaxN_IdenticalStims)
                      action report "Report": message=Discard left stimulus ...
                      action assignment "set FlagDiscardCurrStim to 1": variable=FlagDiscardCurrStim, value=1
                action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                transition conditional "if this is a not allowed rotation in depth": target=IVP Finish, condition=FlagDiscardTrialWithCurrentDeptRot == 1
                transition conditional "If too many identical stims in a row": target=IVP Finish, condition=((FlagShowStimRight == 1 #AND FlagShowStimLeft == 1) #OR FlagAlwaysEnforceMaxSeqLeng == 1) #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                transition conditional "if no match with current staircase trial type": target=IVP Finish, condition=Flag_MatchCurrStairTrial == 0
                transition conditional "If trial contains NOT allowed stimulus": target=IVP Finish, condition=FlagDiscardCurrStim == 1
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
              task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                action report "Report": message=Block the trial ...
                action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
              task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                action report "Report": message=Wait for animal triggering the trial ...
                action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
              task_system_state "IVP Pre-show stimulus"
                action play_sound "Play cue start trial sound": sound=StartTrialSound
                action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
              task_system_state "IVP Show Stimulus"
                action report "Report": message=Triggered stimulus presentation...
                action if "If Shape # 1": condition=BlobIdentityIdx == 0
                  action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                  action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play right stimulus sound": sound=StimRight
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                action if "If Shape # 2": condition=BlobIdentityIdx == 1
                  action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                  action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                  action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1
                    action play_sound "Play left stimulus sound": sound=StimLeft
                  action if "If always reward": condition=FlagAlwaysReward == 1
                    action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                action queue_stimulus "queue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                action assignment "Announce stim on": variable=Announce_StimOn, value=1
                action update_stimulus_display "show stm"
                action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
              task_system_state "IVP Keep playing sound"
                action report "Report": message=Keep playing sound ...
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
              task_system_state "IVP Keep stim ON after cue sound offset"
                action report "Report": message=Keep showing stimulus after sound offset ...
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
              task_system_state "IVP Stimulus Off"
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
              task_system_state "IVP Acquire Port 1": full_name=Acquire State
                action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                action report "Report": message=Response Acquired on Port 1 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to -1 (LEFT port)": variable=WatchResponseSide, value=-1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0
              task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 1 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Right is at the staircase current limit": condition=CurrStairTrial == 8 #AND FlagStaircaseDeptRotRight ==1 #AND stm_rotation_in_depth == current_DeptRotR_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotR": variable=WatchSuccessStair_DeptRotR, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
              task_system_state "IVP Reward Port 1"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput1
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Acquire Port 3": full_name=Acquire State
                action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                action report "Report": message=Response Acquired on Port 3 ...
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action assignment "Set WatchResponseSide to 1 (RIGHT port)": variable=WatchResponseSide, value=1
                transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0
                transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1
              task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                action report "Report": message=Pre-Reward Port 3 ...
                action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                  action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                  action update_stimulus_display "refresh display"
                  action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action play_sound "Play pre-reward sound": sound=AcquireSound
                action assignment "Update success": variable=success, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=1
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=1
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=1
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=1
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=1
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=1
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=1
                action if "If stm_rotation dept Right is at the staircase current limit": condition=CurrStairTrial == 8 #AND FlagStaircaseDeptRotRight ==1 #AND stm_rotation_in_depth == current_DeptRotR_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotR": variable=WatchSuccessStair_DeptRotR, value=1
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=1
                action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
              task_system_state "IVP Reward Port 3"
                action report "Report": message=REWARD!
                action if "If reward more than maximum allowed": condition=reward_duration #GT maximal_reward_duration
                  action report "Report": message=reset reward to maximum!
                  action assignment "reset reward to maximum": variable=reward_duration, value=maximal_reward_duration
                action assignment "Set current reward duration": variable=curr_reward_duration, value=reward_duration
                action assignment "Give Reward": value=curr_reward_duration, variable=LickOutput3
                action play_sound "Play Reward Tone": sound=RewardSound
                transition direct "Goto Licking Time": target=IVP Additional Licking Time
              task_system_state "IVP Additional Licking Time"
                action report "Report": message=Give additional Licking time ...
                action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                  action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
              task_system_state "IVP Failure"
                action report "Report": message=Failed...
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Update failure": variable=failure, value=1
                action if "If stm_size is at the staircase current limit": condition=CurrStairTrial == 1 #AND FlagStaircaseSize ==1 #AND stm_size == current_size_limit_stair
                  action assignment "Update WatchSuccessStair_size": variable=WatchSuccessStair_size, value=0
                action if "If stm_pos_x RIGHT is at the staircase current limit": condition=CurrStairTrial == 2 #AND FlagStaircasePosHR ==1 #AND stm_pos_x == current_PosHR_limit_stair
                  action assignment "Update WatchSuccessStair_PosHR": variable=WatchSuccessStair_PosHR, value=0
                action if "If stm_pos_x LEFT is at the staircase current limit": condition=CurrStairTrial == 3 #AND FlagStaircasePosHL ==1 #AND stm_pos_x == current_PosHL_limit_stair
                  action assignment "Update WatchSuccessStair_PosHL": variable=WatchSuccessStair_PosHL, value=0
                action if "If stm_pos_y UP is at the staircase current limit": condition=CurrStairTrial == 4 #AND FlagStaircasePosVU ==1 #AND stm_pos_y == current_PosVU_limit_stair
                  action assignment "Update WatchSuccessStair_PosVU": variable=WatchSuccessStair_PosVU, value=0
                action if "If stm_pos_y DOWN is at the staircase current limit": condition=CurrStairTrial == 5 #AND FlagStaircasePosVD ==1 #AND stm_pos_y == current_PosVD_limit_stair
                  action assignment "Update WatchSuccessStair_PosVD": variable=WatchSuccessStair_PosVD, value=0
                action if "If stm_rotation CW is at the staircase current limit": condition=CurrStairTrial == 6 #AND FlagStaircaseRotCW ==1 #AND stm_rotation == current_RotCW_limit_stair
                  action assignment "Update WatchSuccessStair_RotCW": variable=WatchSuccessStair_RotCW, value=0
                action if "If stm_rotation ACW is at the staircase current limit": condition=CurrStairTrial == 7 #AND FlagStaircaseRotACW ==1 #AND stm_rotation == current_RotACW_limit_stair
                  action assignment "Update WatchSuccessStair_RotACW": variable=WatchSuccessStair_RotACW, value=0
                action if "If stm_rotation dept Right is at the staircase current limit": condition=CurrStairTrial == 8 #AND FlagStaircaseDeptRotRight ==1 #AND stm_rotation_in_depth == current_DeptRotR_limit_stair
                  action assignment "Update WatchSuccessStair_DeptRotR": variable=WatchSuccessStair_DeptRotR, value=0
                action assignment "Update WatchSuccessBias": variable=WatchSuccessBias, value=0
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
              task_system_state "IVP Punishment Loop Gray"
                action report "Report": message=Failed: punish with gray background
                action play_sound "Play Failure Tone": sound=FailureSound
                action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
              task_system_state "IVP Punishment Loop Black"
                action report "Report": message=Failed: punish with black background
                action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                action play_sound "Play Failure Tone": sound=FailureSound2
                action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                action update_stimulus_display "refresh display"
                action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
              task_system_state "IVP Aborted"
                action report "Report": message=Aborted ...
                action play_sound "Play Failure Tone": sound=FailureSound2
                action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                action stop_sound "Stop left stimulus sound": sound=StimLeft
                action stop_sound "Stop right stimulus sound": sound=StimRight
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Ignored"
                action report "Report": message=Ignored ...
                action assignment "Update ignored": variable=ignore, value=1
                transition direct "AlwaysGo to Idle": target=IVP Idle
              task_system_state "IVP Idle"
                action report "Report": message=idling...
                action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                action update_stimulus_display "refresh display"
                action assignment "Announce stim off": variable=Announce_StimOff, value=1
                action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
              task_system_state "IVP Finish"
                action assignment "Compute the Adjusted_Metric_Correct_Strategy": variable=Adjusted_Metric_Correct_Strategy, value=GainFactorCorrectMetric * Metric_Correct_Strategy
                action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                transition yield "Yield": target=~STATE_REF~
      action stop_device_io "StopDeviceIO": device=phidget
      action stop_device_io "StopDeviceIO2": device=NE500
  protocol "Test all transformations": selection=sequential, nsamples=1, sampling_method=cycles
    block "Transformations Test Block": selection=sequential, nsamples=1, sampling_method=cycles
      trial "Transformations Test Trial": selection=sequential, nsamples=5000, sampling_method=cycles
        action start_device_io "StartDeviceIO": device=phidget
        action start_device_io "StartDeviceIO2": device=NE500
        list "TransformationsTestRandomShapesList": description=Randomly sample a task system in which one of the many possible geometrical shapes is used, selection=random_without_replacement, nsamples=1, sampling_method=cycles
          range_replicator "Loop on Sizes": from=15, to=40, step=5, variable=Test_Size
            range_replicator "Loop on Positions": from=0, to=0, step=1, variable=Test_X_Position
              range_replicator "Loop on Rotations": from=0, to=0, step=1, variable=Test_Rotation
                range_replicator "Loop on Blob 2 rotated in depth to the Right": from=3, to=12, step=3, variable=ImageIndex
                  task_system "Transf Test Task Blob 2 Dept Rot Right"
                    task_system_state "IVP Initialize": description=Initialize the current trial
                      action assignment "Set BlobIdentityIdx to 1 (since this is Blob 2)": variable=BlobIdentityIdx, value=1
                      action assignment "Initialize FlagNoFeedbackInCurrentTrial to zero": variable=FlagNoFeedbackInCurrentTrial, value=0
                      action assignment "Initialize FlagForceCueStimSoundOff to 0": variable=FlagForceCueStimSoundOff, value=0
                      action assignment "Assign Size": variable=stm_size, value=Test_Size
                      action assignment "Assign X Position": variable=stm_pos_x, value=Test_X_Position
                      action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                      action assignment "Assign Rotation": variable=stm_rotation, value=Test_Rotation
                      action assignment "Compute Rotation in Depth": variable=stm_rotation_in_depth, value=ImageIndex*DeptRotR_stair_step
                      action report "Report": message=##### CURRENT STIMULUS: Size = $stm_size
                      action report "Report": message=##### CURRENT STIMULUS: X Position = $stm_pos_x
                      action report "Report": message=##### CURRENT STIMULUS: Rotation = $stm_rotation
                      action report "Report": message=##### CURRENT STIMULUS: Depth Rotation = $stm_rotation_in_depth
                      action if "If this is the no feedback transformation 1": condition=(stm_size == reject_size1 #AND stm_pos_x == reject_pos_x1 #AND stm_rotation == reject_rot1)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 2": condition=(stm_size == reject_size2 #AND stm_pos_x == reject_pos_x2 #AND stm_rotation == reject_rot2)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 3": condition=(stm_size == reject_size3 #AND stm_pos_x == reject_pos_x3 #AND stm_rotation == reject_rot3)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 4": condition=(stm_size == reject_size4 #AND stm_pos_x == reject_pos_x4 #AND stm_rotation == reject_rot4)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 5": condition=(stm_size == reject_size5 #AND stm_pos_x == reject_pos_x5 #AND stm_rotation == reject_rot5)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is part of the no-feedback quadrant": condition=(stm_rotation_in_depth #GT 0 #AND stm_rotation_in_depth #LT 60) #AND stm_size #GT 30
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is not one of the trained axes": condition=stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0
                        action assignment "Set FlagForceCueStimSoundOff to 1": variable=FlagForceCueStimSoundOff, value=1
                      action if "If this is a no feedback trial": condition=FlagNoFeedbackInCurrentTrial == 1
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                        action report "Report": message=@@@@@@@@ ATTENTION! @@@@@@@@
                        action report "Report": message=@@@@@@ NO FEEDBACK TRIAL! @@@@@@
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                      action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                      transition conditional "if show only trained axes": target=Reject current transformation not to be tested, condition=FlagShowOnlyTrainedAxes == 1 #AND ( stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0 )
                      transition conditional "if this is not one of the transformations to test": target=Reject current transformation not to be tested, condition=stm_rotation_in_depth #GT 60 #OR stm_rotation_in_depth #LT -60
                      transition conditional "If too many identical stims in a row": target=Reject Current Trial, condition=FlagShowStimRight == 1 #AND FlagShowStimLeft == 1 #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                      transition conditional "If trial contains NOT allowed stimulus": target=Reject Current Trial, condition=((FlagShowStimRight == 0 #AND ImageIndex == 0) #OR (FlagShowStimLeft == 0 #AND ImageIndex == 1))
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
                    task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                      action report "Report": message=Block the trial ...
                      action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                      transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
                    task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                      action report "Report": message=Wait for animal triggering the trial ...
                      action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                      transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
                    task_system_state "IVP Pre-show stimulus"
                      action play_sound "Play cue start trial sound": sound=StartTrialSound
                      action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                      action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                      transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
                    task_system_state "IVP Show Stimulus"
                      action report "Report": message=Triggered stimulus presentation...
                      action if "If Shape # 1": condition=BlobIdentityIdx == 0
                        action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play right stimulus sound": sound=StimRight
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                      action if "If Shape # 2": condition=BlobIdentityIdx == 1
                        action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play left stimulus sound": sound=StimLeft
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                      action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                      action queue_stimulus "queue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                      action assignment "Announce stim on": variable=Announce_StimOn, value=1
                      action update_stimulus_display "show stm"
                      action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                      action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                      action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                      transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
                    task_system_state "IVP Keep playing sound"
                      action report "Report": message=Keep playing sound ...
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
                    task_system_state "IVP Keep stim ON after cue sound offset"
                      action report "Report": message=Keep showing stimulus after sound offset ...
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
                    task_system_state "IVP Stimulus Off"
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                      transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
                    task_system_state "IVP Acquire Port 1": full_name=Acquire State
                      action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                      action report "Report": message=Response Acquired on Port 1 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but not feedback": target=Correct No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 1 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
                    task_system_state "IVP Reward Port 1"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput1
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Acquire Port 3": full_name=Acquire State
                      action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                      action report "Report": message=Response Acquired on Port 3 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but no feedback": target=Correct No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 3 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
                    task_system_state "IVP Reward Port 3"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput3
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Additional Licking Time"
                      action report "Report": message=Give additional Licking time ...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                        action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                      action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
                    task_system_state "IVP Failure"
                      action report "Report": message=Failed...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                      transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
                    task_system_state "IVP Punishment Loop Gray"
                      action report "Report": message=Failed: punish with gray background
                      action play_sound "Play Failure Tone": sound=FailureSound
                      action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
                    task_system_state "IVP Punishment Loop Black"
                      action report "Report": message=Failed: punish with black background
                      action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                      transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
                    task_system_state "IVP Aborted"
                      action report "Report": message=Aborted ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Ignored"
                      action report "Report": message=Ignored ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update ignored": variable=ignore, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Idle"
                      action report "Report": message=idling...
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                      action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                      transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
                    task_system_state "Reject Current Trial"
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Increment StimRejections_Counter": variable=StimRejections_Counter, value=StimRejections_Counter+1
                      action report "Report": message=... Reject current trial. Increment rejection counter to $StimRejections_Counter
                      action if "If too many rejections": condition=StimRejections_Counter #GT MaxN_ConsecutiveRejections
                        action report "Report": message=Too many trial rejections! Initialize to zero all stim presentation counters!
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action assignment "Intialize StimRejections_Counter back to zero": variable=StimRejections_Counter, value=0
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Reject current transformation not to be tested"
                      action report "Report": message=@@@@@@ Transformation NOT to be tested: REJECTED @@@@@@
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Correct No feedback"
                      action report "Report": message=... Correct trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update success": variable=success, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Wrong No feedback"
                      action report "Report": message=... Wrong trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "IVP Finish"
                      action report "Report": message=... Yielding
                      action assignment "Reset Announce trial no feedback to zero": variable=Announce_TrialNoFeedback, value=0
                      action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                      action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                      action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                      action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                      action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                      action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                      transition yield "Yield": target=~STATE_REF~
                range_replicator "Loop on Blob 1 rotated in depth to the Right": from=3, to=12, step=3, variable=ImageIndex
                  task_system "Transf Test Task Blob 1 Dept Rot Right"
                    task_system_state "IVP Initialize": description=Initialize the current trial
                      action assignment "Set BlobIdentityIdx to 0 (since this is Blob 1)": variable=BlobIdentityIdx, value=0
                      action assignment "Initialize FlagNoFeedbackInCurrentTrial to zero": variable=FlagNoFeedbackInCurrentTrial, value=0
                      action assignment "Initialize FlagForceCueStimSoundOff to 0": variable=FlagForceCueStimSoundOff, value=0
                      action assignment "Assign Size": variable=stm_size, value=Test_Size
                      action assignment "Assign X Position": variable=stm_pos_x, value=Test_X_Position
                      action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                      action assignment "Assign Rotation": variable=stm_rotation, value=Test_Rotation
                      action assignment "Compute Rotation in Depth": variable=stm_rotation_in_depth, value=ImageIndex*DeptRotR_stair_step
                      action report "Report": message=##### CURRENT STIMULUS: Size = $stm_size
                      action report "Report": message=##### CURRENT STIMULUS: X Position = $stm_pos_x
                      action report "Report": message=##### CURRENT STIMULUS: Rotation = $stm_rotation
                      action report "Report": message=##### CURRENT STIMULUS: Depth Rotation = $stm_rotation_in_depth
                      action if "If this is the no feedback transformation 1": condition=(stm_size == reject_size1 #AND stm_pos_x == reject_pos_x1 #AND stm_rotation == reject_rot1)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 2": condition=(stm_size == reject_size2 #AND stm_pos_x == reject_pos_x2 #AND stm_rotation == reject_rot2)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 3": condition=(stm_size == reject_size3 #AND stm_pos_x == reject_pos_x3 #AND stm_rotation == reject_rot3)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 4": condition=(stm_size == reject_size4 #AND stm_pos_x == reject_pos_x4 #AND stm_rotation == reject_rot4)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 5": condition=(stm_size == reject_size5 #AND stm_pos_x == reject_pos_x5 #AND stm_rotation == reject_rot5)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is part of the no-feedback quadrant": condition=(stm_rotation_in_depth #GT 0 #AND stm_rotation_in_depth #LT 60) #AND stm_size #GT 30
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is not one of the trained axes": condition=stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0
                        action assignment "Set FlagForceCueStimSoundOff to 1": variable=FlagForceCueStimSoundOff, value=1
                      action if "If this is a no feedback trial": condition=FlagNoFeedbackInCurrentTrial == 1
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                        action report "Report": message=@@@@@@@@ ATTENTION! @@@@@@@@
                        action report "Report": message=@@@@@@ NO FEEDBACK TRIAL! @@@@@@
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                      action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                      transition conditional "if show only trained axes": target=Reject current transformation not to be tested, condition=FlagShowOnlyTrainedAxes == 1 #AND ( stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0 )
                      transition conditional "if this is not one of the transformations to test": target=Reject current transformation not to be tested, condition=stm_rotation_in_depth #GT 60 #OR stm_rotation_in_depth #LT -60
                      transition conditional "If too many identical stims in a row": target=Reject Current Trial, condition=FlagShowStimRight == 1 #AND FlagShowStimLeft == 1 #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                      transition conditional "If trial contains NOT allowed stimulus": target=Reject Current Trial, condition=((FlagShowStimRight == 0 #AND ImageIndex == 0) #OR (FlagShowStimLeft == 0 #AND ImageIndex == 1))
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
                    task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                      action report "Report": message=Block the trial ...
                      action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                      transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
                    task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                      action report "Report": message=Wait for animal triggering the trial ...
                      action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                      transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
                    task_system_state "IVP Pre-show stimulus"
                      action play_sound "Play cue start trial sound": sound=StartTrialSound
                      action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                      action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                      transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
                    task_system_state "IVP Show Stimulus"
                      action report "Report": message=Triggered stimulus presentation...
                      action if "If Shape # 1": condition=BlobIdentityIdx == 0
                        action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play right stimulus sound": sound=StimRight
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                      action if "If Shape # 2": condition=BlobIdentityIdx == 1
                        action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play left stimulus sound": sound=StimLeft
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                      action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                      action queue_stimulus "queue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                      action assignment "Announce stim on": variable=Announce_StimOn, value=1
                      action update_stimulus_display "show stm"
                      action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                      action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                      action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                      transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
                    task_system_state "IVP Keep playing sound"
                      action report "Report": message=Keep playing sound ...
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
                    task_system_state "IVP Keep stim ON after cue sound offset"
                      action report "Report": message=Keep showing stimulus after sound offset ...
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
                    task_system_state "IVP Stimulus Off"
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                      transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
                    task_system_state "IVP Acquire Port 1": full_name=Acquire State
                      action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                      action report "Report": message=Response Acquired on Port 1 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but not feedback": target=Correct No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 1 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
                    task_system_state "IVP Reward Port 1"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput1
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Acquire Port 3": full_name=Acquire State
                      action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                      action report "Report": message=Response Acquired on Port 3 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but no feedback": target=Correct No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 3 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
                    task_system_state "IVP Reward Port 3"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput3
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Additional Licking Time"
                      action report "Report": message=Give additional Licking time ...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                        action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                      action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
                    task_system_state "IVP Failure"
                      action report "Report": message=Failed...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                      transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
                    task_system_state "IVP Punishment Loop Gray"
                      action report "Report": message=Failed: punish with gray background
                      action play_sound "Play Failure Tone": sound=FailureSound
                      action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
                    task_system_state "IVP Punishment Loop Black"
                      action report "Report": message=Failed: punish with black background
                      action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                      transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
                    task_system_state "IVP Aborted"
                      action report "Report": message=Aborted ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Ignored"
                      action report "Report": message=Ignored ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update ignored": variable=ignore, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Idle"
                      action report "Report": message=idling...
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                      action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                      transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
                    task_system_state "Reject Current Trial"
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Increment StimRejections_Counter": variable=StimRejections_Counter, value=StimRejections_Counter+1
                      action report "Report": message=... Reject current trial. Increment rejection counter to $StimRejections_Counter
                      action if "If too many rejections": condition=StimRejections_Counter #GT MaxN_ConsecutiveRejections
                        action report "Report": message=Too many trial rejections! Initialize to zero all stim presentation counters!
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action assignment "Intialize StimRejections_Counter back to zero": variable=StimRejections_Counter, value=0
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Reject current transformation not to be tested"
                      action report "Report": message=@@@@@@ Transformation NOT to be tested: REJECTED @@@@@@
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Correct No feedback"
                      action report "Report": message=... Correct trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update success": variable=success, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Wrong No feedback"
                      action report "Report": message=... Wrong trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotRight[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "IVP Finish"
                      action report "Report": message=... Yielding
                      action assignment "Reset Announce trial no feedback to zero": variable=Announce_TrialNoFeedback, value=0
                      action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                      action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                      action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                      action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                      action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                      action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                      transition yield "Yield": target=~STATE_REF~
                range_replicator "Loop on Blob 1 rotated in depth to the Left": from=0, to=12, step=3, variable=ImageIndex
                  task_system "Transf Test Task Blob 1 Dept Rot Left"
                    task_system_state "IVP Initialize": description=Initialize the current trial
                      action assignment "Set BlobIdentityIdx to 0 (since this is Blob 1)": variable=BlobIdentityIdx, value=0
                      action assignment "Initialize FlagNoFeedbackInCurrentTrial to zero": variable=FlagNoFeedbackInCurrentTrial, value=0
                      action assignment "Initialize FlagForceCueStimSoundOff to 0": variable=FlagForceCueStimSoundOff, value=0
                      action assignment "Assign Size": variable=stm_size, value=Test_Size
                      action assignment "Assign X Position": variable=stm_pos_x, value=Test_X_Position
                      action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                      action assignment "Assign Rotation": variable=stm_rotation, value=Test_Rotation
                      action assignment "Compute Rotation in Depth": variable=stm_rotation_in_depth, value=-ImageIndex*DeptRotL_stair_step-MaxDeptRotAngle
                      action report "Report": message=##### CURRENT STIMULUS: Size = $stm_size
                      action report "Report": message=##### CURRENT STIMULUS: X Position = $stm_pos_x
                      action report "Report": message=##### CURRENT STIMULUS: Rotation = $stm_rotation
                      action report "Report": message=##### CURRENT STIMULUS: Depth Rotation = $stm_rotation_in_depth
                      action if "If this is the no feedback transformation 1": condition=(stm_size == reject_size1 #AND stm_pos_x == reject_pos_x1 #AND stm_rotation == reject_rot1)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 2": condition=(stm_size == reject_size2 #AND stm_pos_x == reject_pos_x2 #AND stm_rotation == reject_rot2)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 3": condition=(stm_size == reject_size3 #AND stm_pos_x == reject_pos_x3 #AND stm_rotation == reject_rot3)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 4": condition=(stm_size == reject_size4 #AND stm_pos_x == reject_pos_x4 #AND stm_rotation == reject_rot4)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 5": condition=(stm_size == reject_size5 #AND stm_pos_x == reject_pos_x5 #AND stm_rotation == reject_rot5)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is part of the no-feedback quadrant": condition=(stm_rotation_in_depth #GT 0 #AND stm_rotation_in_depth #LT 60) #AND stm_size #GT 30
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is not one of the trained axes": condition=stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0
                        action assignment "Set FlagForceCueStimSoundOff to 1": variable=FlagForceCueStimSoundOff, value=1
                      action if "If this is a no feedback trial": condition=FlagNoFeedbackInCurrentTrial == 1
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                        action report "Report": message=@@@@@@@@ ATTENTION! @@@@@@@@
                        action report "Report": message=@@@@@@ NO FEEDBACK TRIAL! @@@@@@
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                      action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                      transition conditional "if show only trained axes": target=Reject current transformation not to be tested, condition=FlagShowOnlyTrainedAxes == 1 #AND ( stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0 )
                      transition conditional "if this is not one of the transformations to test": target=Reject current transformation not to be tested, condition=stm_rotation_in_depth #GT 60 #OR stm_rotation_in_depth #LT -60
                      transition conditional "If too many identical stims in a row": target=Reject Current Trial, condition=FlagShowStimRight == 1 #AND FlagShowStimLeft == 1 #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                      transition conditional "If trial contains NOT allowed stimulus": target=Reject Current Trial, condition=((FlagShowStimRight == 0 #AND ImageIndex == 0) #OR (FlagShowStimLeft == 0 #AND ImageIndex == 1))
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
                    task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                      action report "Report": message=Block the trial ...
                      action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                      transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
                    task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                      action report "Report": message=Wait for animal triggering the trial ...
                      action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                      transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
                    task_system_state "IVP Pre-show stimulus"
                      action play_sound "Play cue start trial sound": sound=StartTrialSound
                      action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                      action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                      transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
                    task_system_state "IVP Show Stimulus"
                      action report "Report": message=Triggered stimulus presentation...
                      action if "If Shape # 1": condition=BlobIdentityIdx == 0
                        action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play right stimulus sound": sound=StimRight
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                      action if "If Shape # 2": condition=BlobIdentityIdx == 1
                        action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play left stimulus sound": sound=StimLeft
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                      action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                      action queue_stimulus "queue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                      action assignment "Announce stim on": variable=Announce_StimOn, value=1
                      action update_stimulus_display "show stm"
                      action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                      action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                      action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                      transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
                    task_system_state "IVP Keep playing sound"
                      action report "Report": message=Keep playing sound ...
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
                    task_system_state "IVP Keep stim ON after cue sound offset"
                      action report "Report": message=Keep showing stimulus after sound offset ...
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
                    task_system_state "IVP Stimulus Off"
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                      transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
                    task_system_state "IVP Acquire Port 1": full_name=Acquire State
                      action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                      action report "Report": message=Response Acquired on Port 1 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but not feedback": target=Correct No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 1 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
                    task_system_state "IVP Reward Port 1"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput1
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Acquire Port 3": full_name=Acquire State
                      action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                      action report "Report": message=Response Acquired on Port 3 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but no feedback": target=Correct No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 3 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
                    task_system_state "IVP Reward Port 3"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput3
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Additional Licking Time"
                      action report "Report": message=Give additional Licking time ...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                        action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                      action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
                    task_system_state "IVP Failure"
                      action report "Report": message=Failed...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                      transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
                    task_system_state "IVP Punishment Loop Gray"
                      action report "Report": message=Failed: punish with gray background
                      action play_sound "Play Failure Tone": sound=FailureSound
                      action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
                    task_system_state "IVP Punishment Loop Black"
                      action report "Report": message=Failed: punish with black background
                      action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                      transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
                    task_system_state "IVP Aborted"
                      action report "Report": message=Aborted ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Ignored"
                      action report "Report": message=Ignored ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update ignored": variable=ignore, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Idle"
                      action report "Report": message=idling...
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                      action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                      transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
                    task_system_state "Reject Current Trial"
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Increment StimRejections_Counter": variable=StimRejections_Counter, value=StimRejections_Counter+1
                      action report "Report": message=... Reject current trial. Increment rejection counter to $StimRejections_Counter
                      action if "If too many rejections": condition=StimRejections_Counter #GT MaxN_ConsecutiveRejections
                        action report "Report": message=Too many trial rejections! Initialize to zero all stim presentation counters!
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action assignment "Intialize StimRejections_Counter back to zero": variable=StimRejections_Counter, value=0
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Reject current transformation not to be tested"
                      action report "Report": message=@@@@@@ Transformation NOT to be tested: REJECTED @@@@@@
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Correct No feedback"
                      action report "Report": message=... Correct trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update success": variable=success, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Wrong No feedback"
                      action report "Report": message=... Wrong trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N1_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "IVP Finish"
                      action report "Report": message=... Yielding
                      action assignment "Reset Announce trial no feedback to zero": variable=Announce_TrialNoFeedback, value=0
                      action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                      action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                      action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                      action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                      action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                      action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                      transition yield "Yield": target=~STATE_REF~
                range_replicator "Loop on Blob 2 rotated in depth to the Left": from=0, to=12, step=3, variable=ImageIndex
                  task_system "Transf Test Task Blob 2 Dept Rot Left"
                    task_system_state "IVP Initialize": description=Initialize the current trial
                      action assignment "Set BlobIdentityIdx to 1 (since this is Blob 2)": variable=BlobIdentityIdx, value=1
                      action assignment "Initialize FlagNoFeedbackInCurrentTrial to zero": variable=FlagNoFeedbackInCurrentTrial, value=0
                      action assignment "Initialize FlagForceCueStimSoundOff to 0": variable=FlagForceCueStimSoundOff, value=0
                      action assignment "Assign Size": variable=stm_size, value=Test_Size
                      action assignment "Assign X Position": variable=stm_pos_x, value=Test_X_Position
                      action assignment "Set stm_pos_y to default": variable=stm_pos_y, value=Default_PosV
                      action assignment "Assign Rotation": variable=stm_rotation, value=Test_Rotation
                      action assignment "Compute Rotation in Depth": variable=stm_rotation_in_depth, value=-ImageIndex*DeptRotL_stair_step-MaxDeptRotAngle
                      action report "Report": message=##### CURRENT STIMULUS: Size = $stm_size
                      action report "Report": message=##### CURRENT STIMULUS: X Position = $stm_pos_x
                      action report "Report": message=##### CURRENT STIMULUS: Rotation = $stm_rotation
                      action report "Report": message=##### CURRENT STIMULUS: Depth Rotation = $stm_rotation_in_depth
                      action if "If this is the no feedback transformation 1": condition=(stm_size == reject_size1 #AND stm_pos_x == reject_pos_x1 #AND stm_rotation == reject_rot1)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 2": condition=(stm_size == reject_size2 #AND stm_pos_x == reject_pos_x2 #AND stm_rotation == reject_rot2)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 3": condition=(stm_size == reject_size3 #AND stm_pos_x == reject_pos_x3 #AND stm_rotation == reject_rot3)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 4": condition=(stm_size == reject_size4 #AND stm_pos_x == reject_pos_x4 #AND stm_rotation == reject_rot4)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is the no feedback transformation 5": condition=(stm_size == reject_size5 #AND stm_pos_x == reject_pos_x5 #AND stm_rotation == reject_rot5)
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is part of the no-feedback quadrant": condition=(stm_rotation_in_depth #GT 0 #AND stm_rotation_in_depth #LT 60) #AND stm_size #GT 30
                        action assignment "Set FlagNoFeedbackInCurrentTrial flag to 1": variable=FlagNoFeedbackInCurrentTrial, value=1
                      action if "If this is not one of the trained axes": condition=stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0
                        action assignment "Set FlagForceCueStimSoundOff to 1": variable=FlagForceCueStimSoundOff, value=1
                      action if "If this is a no feedback trial": condition=FlagNoFeedbackInCurrentTrial == 1
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                        action report "Report": message=@@@@@@@@ ATTENTION! @@@@@@@@
                        action report "Report": message=@@@@@@ NO FEEDBACK TRIAL! @@@@@@
                        action report "Report": message=@@@@@@@@@@@@@@@@@@@@@@@@@@@
                      action start_timer "CheckForBlockedTrialTime": timer=CheckForBlockedTrialTimer, duration=CheckForBlockedTrialDuration
                      transition conditional "if show only trained axes": target=Reject current transformation not to be tested, condition=FlagShowOnlyTrainedAxes == 1 #AND ( stm_size != Default_size_for_StairRotation #AND stm_rotation_in_depth != 0 )
                      transition conditional "if this is not one of the transformations to test": target=Reject current transformation not to be tested, condition=stm_rotation_in_depth #GT 60 #OR stm_rotation_in_depth #LT -60
                      transition conditional "If too many identical stims in a row": target=Reject Current Trial, condition=FlagShowStimRight == 1 #AND FlagShowStimLeft == 1 #AND ( (BlobIdentityIdx == 0 #AND RightStim_Counter #GE MaxN_IdenticalStims) #OR (BlobIdentityIdx == 1 #AND LeftStim_Counter #GE MaxN_IdenticalStims) )
                      transition conditional "If trial contains NOT allowed stimulus": target=Reject Current Trial, condition=((FlagShowStimRight == 0 #AND ImageIndex == 0) #OR (FlagShowStimLeft == 0 #AND ImageIndex == 1))
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=CheckForBlockedTrialTimer
                    task_system_state "IVP Block Trial": full_name=Block Trial, description=Block current trial is rat is licking before the starting tone
                      action report "Report": message=Block the trial ...
                      action start_timer "Start Block Trial Timer": duration=BlockTrial_time, timer=BlockTrial_timer
                      transition timer_expired "If Timer Expired...": target=IVP Initialize, timer=BlockTrial_timer
                    task_system_state "IVP Wait For Trigger Trial": description=Initialize the current trial
                      action report "Report": message=Wait for animal triggering the trial ...
                      action start_timer "Start Wait For Trigger Timer": timer=WaitForTrigger_timer, duration=WaitForTrigger_time
                      transition conditional "If touching trigger port and allowed stimulus": target=IVP Pre-show stimulus, condition=LickInput2 #GT 500
                      transition conditional "If already licking...": target=IVP Block Trial, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Timer Expired...": target=IVP Wait For Trigger Trial, timer=WaitForTrigger_timer
                    task_system_state "IVP Pre-show stimulus"
                      action play_sound "Play cue start trial sound": sound=StartTrialSound
                      action assignment "Announce start trial": variable=Announce_TrialStart, value=1
                      action start_timer "Start wait for trigger tone duration": timer=WaitForTriggerToneDuration_timer, duration=WaitForTriggerToneDuration_time
                      transition timer_expired "If Timer Expired": target=IVP Show Stimulus, timer=WaitForTriggerToneDuration_timer
                    task_system_state "IVP Show Stimulus"
                      action report "Report": message=Triggered stimulus presentation...
                      action if "If Shape # 1": condition=BlobIdentityIdx == 0
                        action assignment "Increment right stim counter": variable=RightStim_Counter, value=RightStim_Counter+1
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play right stimulus sound": sound=StimRight
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput3
                      action if "If Shape # 2": condition=BlobIdentityIdx == 1
                        action assignment "Increment left stim counter": variable=LeftStim_Counter, value=LeftStim_Counter+1
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action if "If cue stim with a reinforcement sound": condition=FlagCueStimSound == 1 #AND FlagNoFeedbackInCurrentTrial == 0 #AND FlagForceCueStimSoundOff == 0
                          action play_sound "Play left stimulus sound": sound=StimLeft
                        action if "If always reward": condition=FlagAlwaysReward == 1
                          action assignment "Give Reward": value=cue_reward_duration, variable=LickOutput1
                      action queue_stimulus "queue background": full_name=queue stm, stimulus=BlankScreen
                      action queue_stimulus "queue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                      action assignment "Announce stim on": variable=Announce_StimOn, value=1
                      action update_stimulus_display "show stm"
                      action start_timer "Start Stim Duration Timer": duration=StimulusPresentation_time - CueStimSoundPresentation_time, timer=StimulusPresentation_timer
                      action start_timer "Start Sound Duration Timer": duration=CueStimSoundPresentation_time, timer=CueStimSoundPresentation_timer
                      action start_timer "Start TooFast Timer": duration=TooFast_time, timer=TooFast_timer
                      transition conditional "if Lick Port 1 or 3": target=IVP Aborted, condition=LickInput1 #GT 500 #OR LickInput3 #GT 500
                      transition timer_expired "if Too Fast timer expired": target=IVP Keep playing sound, timer=TooFast_timer
                    task_system_state "IVP Keep playing sound"
                      action report "Report": message=Keep playing sound ...
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Sound Duration Timer Expired": target=IVP Keep stim ON after cue sound offset, timer=CueStimSoundPresentation_timer
                    task_system_state "IVP Keep stim ON after cue sound offset"
                      action report "Report": message=Keep showing stimulus after sound offset ...
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      transition conditional "if Lick Port 1": target=IVP Acquire Port 1, condition=LickInput1 #GT 500
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Stimulus Off, timer=StimulusPresentation_timer
                    task_system_state "IVP Stimulus Off"
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action start_timer "Start Acquire Timer": duration=acquire_time - StimulusPresentation_time, timer=acquire_timer
                      transition conditional "If Lick Port 1": condition=LickInput1 #GT 500, target=IVP Acquire Port 1
                      transition conditional "if Lick Port 3": target=IVP Acquire Port 3, condition=LickInput3 #GT 500
                      transition timer_expired "If Timer Expired": target=IVP Ignored, timer=acquire_timer
                    task_system_state "IVP Acquire Port 1": full_name=Acquire State
                      action assignment "Announce trigger port 1": variable=Announce_AcquirePort1, value=1
                      action report "Report": message=Response Acquired on Port 1 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but not feedback": target=Correct No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 1, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 1": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 1 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 1, timer=prestim_timer
                    task_system_state "IVP Reward Port 1"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput1
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Acquire Port 3": full_name=Acquire State
                      action assignment "Announce trigger port 3": variable=Announce_AcquirePort3, value=1
                      action report "Report": message=Response Acquired on Port 3 ...
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      transition conditional "Correct Response but no feedback": target=Correct No feedback, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Correct Response": target=IVP Pre-Reward Port 3, condition=BlobIdentityIdx == 0 #AND FlagNoFeedbackInCurrentTrial == 0
                      transition conditional "Wrong Response but no feedback": target=Wrong No feedback, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 1
                      transition conditional "Wrong Response": target=IVP Failure, condition=BlobIdentityIdx == 1 #AND FlagNoFeedbackInCurrentTrial == 0
                    task_system_state "IVP Pre-Reward Port 3": full_name=Acquire State
                      action report "Report": message=Pre-Reward Port 3 ...
                      action if "If don't display stim after response": condition=FlagShowStimAfterResponse == 0
                        action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                        action update_stimulus_display "refresh display"
                        action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action play_sound "Play pre-reward sound": sound=AcquireSound
                      action assignment "Update success": variable=success, value=1
                      action start_timer "Start PreStim Timer": duration=prestim_time, timer=prestim_timer
                      transition timer_expired "If Timer Expired...": target=IVP Reward Port 3, timer=prestim_timer
                    task_system_state "IVP Reward Port 3"
                      action report "Report": message=REWARD!
                      action assignment "Give Reward": value=reward_duration, variable=LickOutput3
                      action play_sound "Play Reward Tone": sound=RewardSound
                      transition direct "Goto Licking Time": target=IVP Additional Licking Time
                    task_system_state "IVP Additional Licking Time"
                      action report "Report": message=Give additional Licking time ...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action if "If reward less than maximum allowed": condition=reward_duration #LT maximal_reward_duration
                        action assignment "Increment reward": variable=reward_duration, value=reward_duration + increment_reward_duration
                      action start_timer "Start licking Timer": duration=licking_time, timer=licking_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Idle, timer=licking_timer
                    task_system_state "IVP Failure"
                      action report "Report": message=Failed...
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action assignment "Initialize punishment cycle index": variable=PunishmentCyclesIndex, value=0
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition conditional "Go into Punishment Loop": target=IVP Punishment Loop Gray, condition=FlagLongPunishment == 1
                      transition conditional "Goto Idle": target=IVP Idle, condition=FlagLongPunishment == 0
                    task_system_state "IVP Punishment Loop Gray"
                      action report "Report": message=Failed: punish with gray background
                      action play_sound "Play Failure Tone": sound=FailureSound
                      action queue_stimulus "queue gray background": full_name=queue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start gray background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Black, timer=background_timer
                    task_system_state "IVP Punishment Loop Black"
                      action report "Report": message=Failed: punish with black background
                      action assignment "Update punishment cycle index": variable=PunishmentCyclesIndex, value=PunishmentCyclesIndex + 1
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action dequeue_stimulus "dequeue gray background": full_name=dequeue stm, stimulus=BlankScreenGray
                      action update_stimulus_display "refresh display"
                      action start_timer "Start black background Timer": duration=backgr_punish_flickering_period, timer=background_timer
                      transition conditional "Repeat current trial as correction": target=IVP Initialize, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 1
                      transition conditional "Exit loop and jump to Idle": target=IVP Idle, condition=PunishmentCyclesIndex #GT N_PunishmentCycles #AND FlagCorrectionTrials == 0
                      transition timer_expired "If Timer Expired ...": target=IVP Punishment Loop Gray, timer=background_timer
                    task_system_state "IVP Aborted"
                      action report "Report": message=Aborted ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action play_sound "Play Failure Tone": sound=FailureSound2
                      action assignment "Initialize reward to minimum": variable=reward_duration, value=minimal_reward_duration
                      action stop_sound "Stop left stimulus sound": sound=StimLeft
                      action stop_sound "Stop right stimulus sound": sound=StimRight
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Ignored"
                      action report "Report": message=Ignored ...
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update ignored": variable=ignore, value=1
                      transition direct "AlwaysGo to Idle": target=IVP Idle
                    task_system_state "IVP Idle"
                      action report "Report": message=idling...
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      action assignment "Announce end trial": variable=Announce_TrialEnd, value=1
                      action start_timer "Start Idle Timer": duration=intertrial_interval, timer=idle_timer
                      transition timer_expired "If Timer Expired...": target=IVP Finish, timer=idle_timer
                    task_system_state "Reject Current Trial"
                      action reject_selections "Reject Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Increment StimRejections_Counter": variable=StimRejections_Counter, value=StimRejections_Counter+1
                      action report "Report": message=... Reject current trial. Increment rejection counter to $StimRejections_Counter
                      action if "If too many rejections": condition=StimRejections_Counter #GT MaxN_ConsecutiveRejections
                        action report "Report": message=Too many trial rejections! Initialize to zero all stim presentation counters!
                        action assignment "Initialize to zero right stim counter": variable=RightStim_Counter, value=0
                        action assignment "Initialize to zero left stim counter": variable=LeftStim_Counter, value=0
                        action assignment "Intialize StimRejections_Counter back to zero": variable=StimRejections_Counter, value=0
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Reject current transformation not to be tested"
                      action report "Report": message=@@@@@@ Transformation NOT to be tested: REJECTED @@@@@@
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Correct No feedback"
                      action report "Report": message=... Correct trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update success": variable=success, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "Wrong No feedback"
                      action report "Report": message=... Wrong trial but NOT rewarded (no feedback)
                      action assignment "Announce trial no feedback": variable=Announce_TrialNoFeedback, value=1
                      action accept_selections "Accept Current Selection": selection=TransformationsTestRandomShapesList
                      action assignment "Update failure": variable=failure, value=1
                      action dequeue_stimulus "dequeue stm": stimulus=Blob_N2_DepRotLeft[ImageIndex]
                      action update_stimulus_display "refresh display"
                      action assignment "Announce stim off": variable=Announce_StimOff, value=1
                      transition direct "AlwaysGo to Finish": target=IVP Finish
                    task_system_state "IVP Finish"
                      action report "Report": message=... Yielding
                      action assignment "Reset Announce trial no feedback to zero": variable=Announce_TrialNoFeedback, value=0
                      action assignment "Reset Announce start trial to zero": variable=Announce_TrialStart, value=0
                      action assignment "Reset Announce end trial to zero": variable=Announce_TrialEnd, value=0
                      action assignment "Reset Announce stim on to zero": variable=Announce_StimOn, value=0
                      action assignment "Reset Announce stim off to zero": variable=Announce_StimOff, value=0
                      action assignment "Reset Announce acquire port 1 to zero": variable=Announce_AcquirePort1, value=0
                      action assignment "Reset Announce acquire port 3 to zero": variable=Announce_AcquirePort3, value=0
                      transition yield "Yield": target=~STATE_REF~
        action stop_device_io "StopDeviceIO": device=phidget
        action stop_device_io "StopDeviceIO2": device=NE500
